PsychoPy2experiment version="2026.1.3"
Settings
  Experiment info = {'participant': '', 'session': '1', 'delay': 'short', 'group': 'A'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = arithmetic_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text_equation
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $math_eq
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    TextComponent text_opt1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $opt_1
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    TextComponent text_opt2
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $opt_2
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    TextComponent text_opt3
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $opt_3
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    KeyboardComponent key_resp_eq
      allowedKeys = '1','2','3'
      correctAns = CorrAns_key.toString()
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_correctness
      Code Type = Auto->JS
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      Begin Experiment:
        _t = 0
      End Routine:
        if key_resp_eq.keys == str(CorrAns_key):
            feedback_msg = 'Correct!'
        else:
            feedback_msg = 'Incorrect!'

        print(key_resp_eq.keys)
        print("FEEDBACK CODE RUNNING")
        print("Response =", key_resp_eq.keys)
        print("Correct answer =", CorrAns_key)
        print("feedback_msg =", feedback_msg)
        _t += 1
        print('trial=',_t)
  Routine instruction_screen
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    TextComponent text_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will see arithmetic expressions with possible answers. You will need to select with the keyboard the correct answer ("1", "2" or"3").

        This task will take about 8 minutes.

        Press SPACEBAR to continue
    KeyboardComponent key_resp_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine feedback
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    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $feedback_msg
  Routine set_options
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    CodeComponent code_opts
      Code Type = Auto->JS
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      Begin Routine:
        print('Debug prints')
        print('correct ans key:',CorrAns_key)
        if CorrAns_key == 1:
            print('in 1')
            opt_1 = '1. ' + str(CorrAns)
            opt_2 = '2. ' + str(dstr1)
            opt_3 = '3. ' + str(dstr2)
        elif CorrAns_key == 2:
            print('in 2')
            opt_1 = '1. ' + str(dstr1)
            opt_2 = '2. ' + str(CorrAns)
            opt_3 = '3. ' + str(dstr2)
        elif CorrAns_key == 3:
            print('in 3')
            opt_1 = '1. ' + str(dstr1)
            opt_2 = '2. ' + str(dstr2)
            opt_3 = '3. ' + str(CorrAns)

        print(opt_1,opt_2,opt_3)
    CodeComponent code_printexpInfo
      Code Type = Both
      Begin JS Experiment:
        console.log('participant:',expInfo['participant']);
        console.log('session:',expInfo['session']);
        console.log('group:',expInfo['group']);
        console.log('delay:',expInfo['delay']);
  Routine is_rest
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    CodeComponent code_rest
      Code Type = Auto->JS
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      Begin Routine:
        if _t%10 == 0:
            rest = 1
        else:
            rest = 0
  Routine rest_screen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Good Job!

        The next set of question will begin shortly...
  Routine end_screen
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    TextComponent text_endscreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Great job!

        To continue to the next task, Press SPACEBAR, and select "OK" in the prompted window - this will lead you to the next part of the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 14
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    CodeComponent code_url
      Code Type = Both
      Begin JS Experiment:
        let completion_url;
      End JS Routine:
        let completion_url = 'https://run.pavlovia.org/nitzanlubi/sbl_retrieval_exp/?group='
            + expInfo['group']
            + '&participant=' + expInfo['participant']
            + '&session=' + expInfo['session']
            + '&delay=' + expInfo['delay'];
        console.log('completion url:',completion_url);
        //window.location.href = completion_url;
        psychoJS.setRedirectUrls(completion_url, '');
  Routine Q1
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    TextComponent text_q1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job!

        Before we move to the next task, please answer the following question:

        From 1 (very easy) to 9 (very difficult), how difficult were the arithmetic problems? press the number key that best describe your experience.
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Q2
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  Routine pause
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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Flow
  Routine instruction_screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = math_cond_file.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('math_eq', '42 - 9'), ('CorrAns', 33), ('dstr1', 31), ('dstr2', 23), ('CorrAns_key', 2)]),
      OrderedDict([('math_eq', '11 * 3'), ('CorrAns', 33), ('dstr1', 31), ('dstr2', 38), ('CorrAns_key', 1)]),
      OrderedDict([('math_eq', '118 / 2'), ('CorrAns', 59), ('dstr1', 63), ('dstr2', 57), ('CorrAns_key', 2)]),
      OrderedDict([('math_eq', '36 - 13'), ('CorrAns', 23), ('dstr1', 28), ('dstr2', 22), ('CorrAns_key', 2)]),
      OrderedDict([('math_eq', '38 - 12'), ('CorrAns', 26), ('dstr1', 23), ('dstr2', 36), ('CorrAns_key', 2)]),
      OrderedDict([('math_eq', '38 + 26'), ('CorrAns', 64), ('dstr1', 54), ('dstr2', 62), ('CorrAns_key', 1)]),
      OrderedDict([('math_eq', '108 / 2'), ('CorrAns', 54), ('dstr1', 56), ('dstr2', 64), ('CorrAns_key', 2)]),
      OrderedDict([('math_eq', '15 * 2'), ('CorrAns', 30), ('dstr1', 27), ('dstr2', 26), ('CorrAns_key', 2)]),
      OrderedDict([('math_eq', '30 - 14'), ('CorrAns', 16), ('dstr1', 17), ('dstr2', 18), ('CorrAns_key', 2)]),
      OrderedDict([('math_eq', '13 * 2'), ('CorrAns', 26), ('dstr1', 24), ('dstr2', 23), ('CorrAns_key', 3)]),
      OrderedDict([('math_eq', '31 + 10'), ('CorrAns', 41), ('dstr1', 39), ('dstr2', 32), ('CorrAns_key', 3)]),
      OrderedDict([('math_eq', '27 - 14'), ('CorrAns', 13), ('dstr1', 10), ('dstr2', 23), ('CorrAns_key', 1)]),
      OrderedDict([('math_eq', '27 + 18'), ('CorrAns', 45), ('dstr1', 47), ('dstr2', 52), ('CorrAns_key', 1)]),
      OrderedDict([('math_eq', '37 + 18'), ('CorrAns', 55), ('dstr1', 47), ('dstr2', 45), ('CorrAns_key', 2)])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
    Routine set_options
    Routine trial
    Routine pause
    Routine feedback
    Routine is_rest
    LoopInitiator loop_rest loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = rest
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      Routine rest_screen
    LoopTerminator loop_rest
  LoopTerminator trials
  Routine Q1
  Routine end_screen
