PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '1', 'group': 'A', 'delay': 'short', 'mode': '["behavioral","opm"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = -1.0000, -1.0000, -1.0000
  expName = encodingtask
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine get_relatedness_keys
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    CodeComponent code_get_keys
      Code Type = Py
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      Begin Experiment:
        import pandas as pd

        mode = expInfo.get('mode', 'behavioral').lower()

        # =========================================
        # LOAD COUNTERBALANCE FILE
        # =========================================

        counterbalance_file = 'counterbalanced_vars_behav.csv'

        df = pd.read_csv(counterbalance_file, header=1)

        # clean columns
        df.columns = df.columns.str.strip()

        # force numeric
        df['enc_relatedness_keys'] = pd.to_numeric(
            df['enc_relatedness_keys'],
            errors='coerce'
        )

        subnum = int(expInfo['participant'])

        # find participant row
        ind = df[df['Participant'] == subnum].index[0]

        print("MODE:", mode)
        print("enc_relatedness_keys:", df.loc[ind, 'enc_relatedness_keys'])

        # =========================================
        # ASSIGN RESPONSE KEYS
        # =========================================

        if mode == 'opm':

            # OPM / MEG BUTTONS

            if df.loc[ind, 'enc_relatedness_keys'] == 0:

                key_related = 'b'
                key_related_txt = 'Blue'

                key_unrelated = 'r'
                key_unrelated_txt = 'Green'

                instruction_text = (
                    'If they are related, press the Blue (left) button\n'
                    'If they are unrelated, press the Green (right) button\n\n'
                    'IMPORTANT: respond only AFTER the scene and item disappear.\n\n'
                    'Press SPACEBAR to continue.'
                )

            elif df.loc[ind, 'enc_relatedness_keys'] == 1:

                key_related = 'g'
                key_related_txt = 'Green'

                key_unrelated = 'b'
                key_unrelated_txt = 'Blue'

                instruction_text = (
                    'If they are related, press the Green (right) button\n'
                    'If they are unrelated, press the Blue (left) button\n\n'
                    'IMPORTANT: respond only AFTER the scene and item disappear.\n\n'
                    'Press SPACEBAR to continue.'
                )

        else:

            # BEHAVIORAL KEYBOARD

            if df.loc[ind, 'enc_relatedness_keys'] == 0:

                key_related = 'q'
                key_unrelated = 'p'

                instruction_text = (
                    'If they are related, press Q\n'
                    'If they are unrelated, press P\n\n'
                    'IMPORTANT: respond only AFTER the scene and item disappear.\n\n'
                    'Press SPACEBAR to continue.'
                )

            elif df.loc[ind, 'enc_relatedness_keys'] == 1:

                key_related = 'p'
                key_unrelated = 'q'

                instruction_text = (
                    'If they are related, press P\n'
                    'If they are unrelated, press Q\n\n'
                    'IMPORTANT: respond only AFTER the scene and item disappear.\n\n'
                    'Press SPACEBAR to continue.'
                )

        # =========================================
        # RESPONSE KEY LIST
        # =========================================

        response_keys = [key_related, key_unrelated]

        print("key_related:", key_related)
        print("key_unrelated:", key_unrelated)
        print("response_keys:", response_keys)
    CodeComponent code_printexpInfo
      Code Type = Py
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      Begin Experiment:
        print('participant:', expInfo['participant'])
        print('session:', expInfo['session'])
        print('group:', expInfo['group'])
        print('delay:', expInfo['delay'])
    CodeComponent code_scene_screens
      Code Type = Py
      disabled = True
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      Begin Routine:
        import pandas as pd

        # === LOAD STIM LIST ===
        stim_list = f"stimuli/stim_lists/stimuli_list_sub_{subnum}_run_{run}.csv"

        if not os.path.exists(stim_list):
            raise FileNotFoundError(f"Stim list not found: {stim_list}")

        df = pd.read_csv(stim_list)

        # === CONVERT FILE NAMES → LOGICAL IDS ===
        def extract_scene_id(filename):
            name = os.path.basename(filename)

            if name.startswith('JA'):
                return 'JA'
            elif name.startswith('JB'):
                return 'JB'
            elif name.startswith('UA'):
                return 'UA'
            elif name.startswith('UB'):
                return 'UB'
            else:
                raise ValueError(f"Unexpected filename: {filename}")

        df['scene_id'] = df['scene_stimulus'].apply(extract_scene_id)

        # === BUILD LABEL DICTIONARY ===
        labels = dict(zip(df['scene_id'], df['scene_label']))
    CodeComponent init_counterbalance
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import random


        cond_file = f"stimuli/cond_lists/scene_names_sub_{expInfo['participant']}.csv"
        df = pd.read_csv(cond_file)

        scene_JA_lbl = df.loc[df['scene_stimulus']=='JA','scene_label'].values[0]
        scene_JB_lbl = df.loc[df['scene_stimulus']=='JB','scene_label'].values[0]
        scene_UA_lbl = df.loc[df['scene_stimulus']=='UA','scene_label'].values[0]
        scene_UB_lbl = df.loc[df['scene_stimulus']=='UB','scene_label'].values[0]
  Routine instructions_screen
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    TextComponent text_instructions
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        In this item-scene association task, you will see different items (objects or animals) within one of the jungle or undersea scenes you memorized previously. After each presentation of an item in a scene, you will be asked to report whether they are related or unrelated.

        An item is related to a scene if you think it is plausible that such an item would live or would be used in such a scene in real life. If not, they are unrelated.

        You will see each item-scene pair three times in total.

        Press SPACEBAR to continue.
    KeyboardComponent key_welcome
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine instruction_keys
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    TextComponent text_keys
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent key_resp_keysInst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank2000
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine get_run_stim_list
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    CodeComponent code_get_stim_list
      Code Type = Py
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      Begin Routine:
        subnum = int(expInfo['participant'])

        # NO group / delay / set logic
        stim_list = f"stimuli/stim_lists/stimuli_list_sub_{subnum}_run_{run}.csv"

        print("stim list:", stim_list)
  Routine integrated_scene_presentation
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # define correct key for THIS trial
        if congruency == 'sc':
            correct_key = key_related
        elif congruency == 'si':
            correct_key = key_unrelated

        print("congruency:", congruency, "| correct_key:", correct_key)
    ImageComponent image_integrated
      image [set every repeat] = $integrated_stimulus
      size = (1.78, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    CodeComponent code_set_trig_val
      Code Type = Py
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      Begin Routine:
        if mode == 'opm':
            current_trigger_value = trigger_value
        else:
            current_trigger_value = 0
    CodeComponent code_trigger
      Code Type = Py
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      Begin Experiment:
        import atexit

        mode = expInfo.get('mode', 'behavioral').lower()

        # =========================================
        # OPM MODE
        # =========================================

        if mode == 'opm':

            import parallel

            print("OPM mode ON")

            pdev = parallel.Parallel()

            dpx_base_address = 0

            def trigger_internal(trigger_val):
                pdev.setData(trigger_val & 255)
                core.wait(0.002)
                pdev.setData(0)

            def dpx_trigger(trigger_val, addr=None):
                win.callOnFlip(trigger_internal, trigger_val)

            def cleanup():
                pass

        # =========================================
        # BEHAVIORAL MODE
        # =========================================

        else:

            print("Behavioral mode ON")

            dpx_base_address = None

            def dpx_trigger(trigger_val, addr=None):
                pass

            def cleanup():
                pass

        # =========================================
        # REGISTER CLEANUP
        # =========================================

        atexit.register(cleanup)
      Each Frame:
        if image_integrated.status == STARTED and image_integrated.frameNStart == frameN:

            dpx_trigger(current_trigger_value, dpx_base_address)
    CodeComponent only_ten_stim
      Code Type = Py
      disabled = True
      Begin Routine:
        if trials.thisN >= 10:
            trials.finished = True
  Routine congruency_response
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    TextComponent text_congruency
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Related
        or Unrelated?
    KeyboardComponent key_resp_congruency
      allowedKeys [set every repeat] = response_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine blank1000
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine is_last_run
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    CodeComponent code_last_run
      Code Type = Py
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      Begin Routine:
        # get bewtween-run instruction or not?
        if run != 3:
            not_last = 1 # get in
        elif run ==3:
            not_last = 0 # don't
  Routine between_run_pause
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    CodeComponent code_pause_intructions
      Code Type = Py
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      Begin Routine:
        if key_related == 'q':
            text_inst_pause = (
                "Reminder:\n\n"
                "If the scene and item are related, press Q\n"
                "If they are unrelated, press P.\n\n"
                "Press ONLY AFTER the item and scene disappeared!\n\n"
                "Press SPACEBAR to resume."
            )

        elif key_related == 'p':
            text_inst_pause = (
                "Reminder:\n\n"
                "If the scene and item are related, press P\n"
                "If they are unrelated, press Q.\n\n"
                "Press ONLY AFTER the item and scene disappeared!\n\n"
                "Press SPACEBAR to resume."
            )
    TextComponent text_run_pause
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Good job! You can rest for a moment and then continue to the next run. 
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    TextComponent text_relatedness_pause
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_inst_pause
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    KeyboardComponent key_resp_next_run
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_screen
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    CodeComponent code_end_inst
      Code Type = Py
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      Begin Routine:
        end_inst = (
                "Great job! You are done with the first session of our experiment!\n\n"
                "Press SPACEBAR to exit and notify researcher to next steps. "
            )
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $end_inst
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 14
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    CodeComponent code_url
      Code Type = Py
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      End Routine:
        if expInfo['group'] == 'A' and expInfo['delay'] == 'short':
            completion_url = (
                "https://run.pavlovia.org/nitzanlubi/arithmetic_task_exp/?group="
                + expInfo['group']
                + "&participant=" + expInfo['participant']
                + "&session=" + expInfo['session']
                + "&delay=" + expInfo['delay']
            )
        else:
            completion_url = "https://app.prolific.com/submissions/complete?cc=CUFOIWKV"

        print("completion url:", completion_url)
  Routine scene_names_reminder
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    TextComponent text_reminder
      letterHeight = 0.035
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = Reminder: these are the names of the four scenes
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    ImageComponent image1
      image [set every repeat] = stimuli/scenes/JA_1.jpg
      pos = (-.35, .15)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = stimuli/scenes/JB_1.jpg
      pos = (.35, .15)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = stimuli/scenes/UA_1.jpg
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = stimuli/scenes/UB_1.jpg
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox1
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_JA_lbl
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    TextboxComponent textbox2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_JB_lbl
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    TextboxComponent textbox3
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_UA_lbl
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    TextboxComponent textbox4
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_UB_lbl
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    KeyboardComponent key_reminder
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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Flow
  Routine get_relatedness_keys
  Routine instructions_screen
  Routine instruction_keys
  Routine scene_names_reminder
  Routine blank2000
  LoopInitiator runs_trial loopType="TrialHandler"
    conditionsFile = runs_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'run': 1},
      {'run': 2},
      {'run': 3}]
    Routine get_run_stim_list
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stim_list
      loopType = sequential
      nReps = 1
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      Routine integrated_scene_presentation
      Routine congruency_response
      Routine blank1000
    LoopTerminator trials
    Routine is_last_run
    LoopInitiator between_run_inst loopType="TrialHandler"
      loopType = random
      nReps = not_last
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      Routine between_run_pause
    LoopTerminator between_run_inst
  LoopTerminator runs_trial
  Routine end_screen
