PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = encodingtask
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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  Routine get_relatedness_keys
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    CodeComponent code_get_keys
      Code Type = Both
      Before JS Experiment:
        var key_related
        var key_unrelated
        var instruction_text
      Begin Experiment:
        # allocate participant to relatedness response key accprding
        # to counterbalanced_vars.xlsx
        import pandas as pd
        df = pd.read_csv('counterbalanced_vars_behav.csv') # match to relevant experiment var table
        subnum = int(expInfo['participant'])
        ind = df[df['Participant'] == subnum].index[0]
        sub_conds = df.loc[ind,df.columns].values.tolist()
        print(sub_conds)
        # assign context keys
        if sub_conds[1] == 0:
            key_related = 'q'
            key_unrelated = 'p'
            instruction_text = 'If they are related, press Q\nIf they are unrelated, press P\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.'
        elif sub_conds[1] == 1:
            key_related = 'p'
            key_unrelated = 'q'
            instruction_text = 'If they are related, press P\nIf they are unrelated, press Q\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.'
      Begin JS Experiment:
        // Function to read and process the CSV file
         function loadCSVFile(filePath, callback) {
           var request = new XMLHttpRequest();
           request.open('GET', filePath, true);
           request.onreadystatechange = function () {
             if (request.readyState === 4 && request.status === 200) {
               callback(request.responseText);
             }
           };
           request.send();
         }

         // Callback function to process CSV data
         function processCSVData(csvData) {
           var lines = csvData.split('\n');
           var headers = lines[0].split(',');
           var data = lines.slice(1).map(function(line) {
             var values = line.split(',');
             var entry = {};
             headers.forEach(function(header, index) {
               entry[header] = values[index];
             });
             return entry;
           });

           var subnum = parseInt(expInfo['participant']);
           var sub_conds = data.find(function(row) {
             return parseInt(row['Participant']) === subnum;
           });

           // Converting row values to an array
           var sub_conds_values = Object.values(sub_conds);

           // Logging the values (similar to print in Python)
           console.log(sub_conds_values);

           // Assign context keys based on the value of sub_conds[1]
           if (sub_conds_values[1] === '0') {
             key_related = 'q';
             key_unrelated = 'p';
             instruction_text = 'If they are related, press Q\nIf they are unrelated, press P\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.';
           } else if (sub_conds_values[1] === '1') {
             key_related = 'p';
             key_unrelated = 'q';
             instruction_text = 'If they are related, press P\nIf they are unrelated, press Q\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.';
           }

           // Use key_related, key_unrelated, and instruction_text as needed in your experiment
           console.log({ key_related, key_unrelated, instruction_text });
         }

         // Load and process the CSV file
         loadCSVFile('counterbalanced_vars.csv', processCSVData);
    CodeComponent code_printexpInfo
      Code Type = Both
      Begin JS Experiment:
        console.log('participant:',expInfo['participant']);
        console.log('session:',expInfo['session']);
        console.log('group:',expInfo['group']);
        console.log('delay:',expInfo['delay']);
  Routine instructions_screen
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    TextComponent text_instructions
      letterHeight = 0.035
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        In this item-scene association task, you will see different items (objects or animals) placed in one of the jungle or undersea scenes you memorized previously. After each presentation of an item and a scene, you will be asked to report whether they are related or unrelated.

        An item is related to a scene if you think it is plausible that such an item would live or would be used in such a scene in real life. If not, they are unrelated.

        You will see each item-scene pair three times in total.

        Press SPACEBAR to continue.
    KeyboardComponent key_welcome
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine instruction_keys
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    TextComponent text_keys
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent key_resp_keysInst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank2000
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine get_run_stim_list
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    CodeComponent code_get_stim_list
      Code Type = Both
      Begin JS Routine:
        subnum = expInfo["participant"];
        session = expInfo["session"];

        // group A's logic: enc set 1 --> filler --> ret set1 -->  enc set 2
        if (expInfo["group"] ==='A'){
            if (expInfo["delay"] === 'short'){
                stim_list = ((((("stimuli/stim_lists/stimuli_list_sub_" + subnum) + "_set_1") + "_run_") + run.toString()) + ".csv");
                }else{
                    if (expInfo["delay"] === 'long'){
                        stim_list = ((((("stimuli/stim_lists/stimuli_list_sub_" + subnum) + "_set_2") + "_run_") + run.toString()) + ".csv");
                        }
                }
            }

        console.log('stim list:',stim_list);
      Begin Routine:
        subnum = expInfo['participant']
        session = expInfo['session']
        stim_list = "stimuli/stim_lists/stimuli_list_sub_" + subnum + '_set_' + session + "_run_" + str(run) + ".csv"
Flow
  Routine trial
  Routine get_relatedness_keys
  Routine instructions_screen
  Routine instruction_keys
  Routine blank2000
  Routine get_run_stim_list
  Routine trial
