PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['delay'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '', 'delay': '', 'group': '', 'mode': 'behavioral'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = SBL_retrieval_MEG
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine item_imagine_scene
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    TextComponent text_imagine
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Imagine the associated scene
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    TextComponent text_keypress
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Press 'SPACEBAR' when you imagine the scene.
    ImageComponent item_cue
      image [set every repeat] = $recalled_stimulus
      size = (1.2, 0.675)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_remember
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_set_trig_val
      Code Type = Py
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      Begin Routine:
        if MEG_mode:
            current_trigger_value = trigger_value
        else:
            current_trigger_value = 0
    CodeComponent code_trigger
      Code Type = Py
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      Begin Experiment:
        # === MEG FLAG ===
        mode = expInfo.get('mode', 'behavioral').lower()

        MEG_mode = (mode == 'opm')

        if MEG_mode:
            from pypixxlib._libdpx import (
                DPxOpen, DPxSelectDevice, DPxStopDoutSched, DPxUpdateRegCache,
                DPxGetDoutBuffBaseAddr, DPxSetDoutBuff, DPxWriteRam,
                DPxSetDoutSched, DPxStartDoutSched, DPxClose,
                DPxSetDoutValue, DPxWriteRegCacheAfterVideoSync
            )
            import atexit

            print("MEG mode ON: initializing DPx")

            DPxOpen()
            DPxSelectDevice('PROPixxCtrl')
            DPxStopDoutSched()
            DPxUpdateRegCache()
            DPxSetDoutValue(0, 0xFFFFFF)
            DPxUpdateRegCache()

            dpx_base_address = DPxGetDoutBuffBaseAddr()

            def dpx_trigger(trigger_val, addr=None):
                if addr is None:
                    addr = dpx_base_address
                buffer_dout = [trigger_val, 0]
                DPxSetDoutBuff(addr, 4)
                DPxWriteRam(addr, buffer_dout)
                DPxSetDoutSched(0, 100, 'hz', 2)
                DPxStartDoutSched()
                DPxWriteRegCacheAfterVideoSync()

            def cleanup():
                DPxStopDoutSched()
                DPxSetDoutValue(0, 0xFFFFFF)
                DPxUpdateRegCache()
                DPxClose()

            atexit.register(cleanup)

        else:
            print("Behavioral mode ON: no DPx")

            # ✅ IMPORTANT: define this so it always exists
            dpx_base_address = None

            def dpx_trigger(trigger_val, addr=None):
                pass

        # === ✅ ADD THIS RIGHT HERE ===
        if MEG_mode:
            choice_keys = ['y', 'b']
            confidence_keys = ['y', 'b', 'r']
        else:
            choice_keys = ['1', '2']
            confidence_keys = ['1', '2', '3']

            # DEBUG PRINTS
        print("Mode:", mode)
        print("Choice keys:", choice_keys)
        print("Confidence keys:", confidence_keys)
      Begin Routine:
        if item_cue.status == STARTED and item_cue.frameNStart == frameN:
            dpx_trigger(current_trigger_value, dpx_base_address)

        # check if there's a dummy setting for the propixx library.

        print("scene:", scene_stimulus)
        print("recalled:", recalled_stimulus)
        print("integrated:", integrated_stimulus)
      Each Frame:
        if item_cue.status == STARTED and item_cue.frameNStart == frameN:

            dpx_trigger(current_trigger_value, dpx_base_address)
  Routine select_scene_name
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    CodeComponent code_set_scene_vars
      Code Type = Py
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      Begin Routine:
        # set current trial's scene labels, color and correct response key
        # according to encoding context

        if scene_cat == 'Jungle':
            cur_labels = jungle_lbl_text
            cur_color = color_jungle
        elif scene_cat == 'Undersea':
            cur_labels = sea_lbl_text
            cur_color = color_sea

        if 'JA' in scene_stimulus:
            cor_scene_key = key_JA
        elif 'JB' in scene_stimulus:
            cor_scene_key = key_JB
        elif 'UA' in scene_stimulus:
            cor_scene_key = key_UA
        elif 'UB' in scene_stimulus:
            cor_scene_key = key_UB
    TextComponent text_scene_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = The context was
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    TextComponent text_actual_context
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $scene_cat
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    TextComponent text_q_scene
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which specific scene?
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    TextComponent text_labels
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $cur_labels
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    KeyboardComponent key_resp_scenes
      allowedKeys [set every repeat] = choice_keys
      correctAns = $correct_key
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine ret_end_screen
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    TextComponent text_endSet
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great job!

        You're done with this set of items.

        Press SPACEBAR to continue
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine select_context
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    CodeComponent code_cor_context_key
      Code Type = Py
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      Begin Routine:
        # RESET keyboard (CRITICAL)
        key_resp_context.keys = []
        key_resp_context.rt = []

        # === DETERMINE CORRECT SCENE ===
        if 'JA' in scene_stimulus:
            correct_scene = 'JA'
        elif 'JB' in scene_stimulus:
            correct_scene = 'JB'
        elif 'UA' in scene_stimulus:
            correct_scene = 'UA'
        elif 'UB' in scene_stimulus:
            correct_scene = 'UB'

        # === MAP SCENE → SCREEN POSITION ===
        if scene_cat == 'Jungle':
            if key_JA == 'y':  # JA is option 1
                correct_option = 1 if correct_scene == 'JA' else 2
            else:
                correct_option = 2 if correct_scene == 'JA' else 1

        elif scene_cat == 'Undersea':
            if key_UA == 'y':  # UA is option 1
                correct_option = 1 if correct_scene == 'UA' else 2
            else:
                correct_option = 2 if correct_scene == 'UA' else 1

        # === MAP TO ACTUAL RESPONSE KEY ===
        if correct_option == 1:
            correct_key = choice_keys[0]
        elif correct_option == 2:
            correct_key = choice_keys[1]
      End Routine:
        # get chosen context for next screen

        if key_resp_context.keys == key_jungle:
            chosen_cont = 'Jungle'
            chosen_cont_color = color_jungle
        elif key_resp_context.keys == key_sea:
            chosen_cont = 'Undersea'
            chosen_cont_color = color_sea
        else:
            chosen_cont = 'Nothing was chosen'
            chosen_cont_color = 'white'

        print("PRESSED:", key_resp_context.keys)
        print("key_jungle:", key_jungle)
        print("key_sea:", key_sea)
        print("chosen_cont:", chosen_cont)
    TextComponent text_context_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which Context?
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    TextComponent text_sea
      color [set every repeat] = $color_sea
      letterHeight = 0.05
      pos [set every repeat] = pos_sea
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_sea_txt
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    TextComponent text_jungle
      color [set every repeat] = $color_jungle
      letterHeight = 0.05
      pos [set every repeat] = pos_jungle
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_jungle_txt
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    KeyboardComponent key_resp_context
      allowedKeys [set every repeat] = choice_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
      syncScreenRefresh = False
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  Routine scene_screen_select
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    CodeComponent code_1
      Code Type = Auto->JS
  Routine print_debug
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        print(key_resp_context.keys)
  Routine get_stim_length
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine create_runs_stim_div
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    CodeComponent code_4
      Code Type = Py
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      Before Experiment:
        run_stim = []
        labels = {}
      Begin Routine:
        stim_num = 80 # hard coded number of PAs

        # Create a list of row numbers
        row_numbers = list(range(stim_num))
        # Shuffle the row numbers
        np.random.shuffle(row_numbers)

        # divide to 4 runs
        run_stim = np.array_split(row_numbers, 4)
        run_stim = [list(run) for run in run_stim]

        print(run_stim[0])
        print(run_stim[1])
        print(run_stim[2])
        print(run_stim[3])
  Routine is_last
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    CodeComponent code_islast
      Code Type = Py
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      Begin Routine:
        if run == 3:
            last_run = 0
        else:
            last_run = 1
  Routine subs_rand_vars
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    CodeComponent code_rand_vars
      Code Type = Py
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      Before Experiment:
        # initialize variables (Python version)

        key_jungle = None
        key_sea = None
        key_UA = None
        key_UB = None
        key_JA = None
        key_JB = None

        color_jungle = None
        color_sea = None

        pos_sea = None
        pos_jungle = None

        context_jungle_txt = None
        context_sea_txt = None
      Begin Experiment:
        subnum = int(expInfo['participant'])
        session = expInfo['session']

        print(session)
      Begin Routine:
        import pandas as pd

        counterbalance_file = 'counterbalanced_vars_behav.csv'

        # 👇 THIS IS THE FIX
        df = pd.read_csv(counterbalance_file, sep=None, engine='python', skiprows=1)

        # Clean column names
        df.columns = df.columns.str.strip()
        df.columns = df.columns.str.replace('\ufeff', '')

        print("Columns:", df.columns.tolist())

        # Check column exists
        if 'Participant' not in df.columns:
            raise Exception(f"'Participant' column not found. Columns are: {df.columns.tolist()}")

        # Convert types
        df['Participant'] = df['Participant'].astype(int)
        subnum = int(subnum)

        print("subnum:", subnum)
        print("Participants in file:", df['Participant'].tolist())

        # Safe lookup
        matches = df[df['Participant'] == subnum]

        if len(matches) == 0:
            raise Exception(f"Participant {subnum} not found in counterbalance file.")

        ind = matches.index[0]

        # Get row
        sub_conds = df.loc[ind, df.columns].values.tolist()
        print("sub_conds:", sub_conds)

        # === Assign variables ===

        mode = expInfo.get('mode', 'behavioral').lower()

        if mode == 'opm':
            if sub_conds[2] == 0:
                key_jungle = 'y'
                key_sea = 'b'
            else:
                key_jungle = 'b'
                key_sea = 'y'

        else:  # behavioral
            if sub_conds[2] == 0:
                key_jungle = '1'
                key_sea = '2'
            else:
                key_jungle = '2'
                key_sea = '1'

        if sub_conds[3] == 0:
            color_jungle = 'purple'
            color_sea = 'pink'
        else:
            color_jungle = 'pink'
            color_sea = 'purple'

        if mode == 'opm':

            if sub_conds[4] == 0:
                key_JA = 'y'
                key_JB = 'b'
            else:
                key_JA = 'b'
                key_JB = 'y'

            if sub_conds[5] == 0:
                key_UA = 'y'
                key_UB = 'b'
            else:
                key_UA = 'b'
                key_UB = 'y'

        else:  # behavioral

            if sub_conds[4] == 0:
                key_JA = '1'
                key_JB = '2'
            else:
                key_JA = '2'
                key_JB = '1'

            if sub_conds[5] == 0:
                key_UA = '1'
                key_UB = '2'
            else:
                key_UA = '2'
                key_UB = '1'

        print("MODE:", mode)

        print("key_jungle:", key_jungle)
        print("key_sea:", key_sea)

        print("key_JA:", key_JA)
        print("key_JB:", key_JB)

        print("key_UA:", key_UA)
        print("key_UB:", key_UB)

        print("color_jungle:", color_jungle)
        print("color_sea:", color_sea)
    CodeComponent code_context_screen
      Code Type = Py
      Begin Routine:
        # create the text for select context screen based
        #on participant's colors and keys

        #    key_desert = '2'
        #    key_ocean = '1'
        #    color_desert = 'Purple'
        #    color_ocean = 'Pink'

        if key_jungle in ['y', '1']:
            context_jungle_txt = '1. Jungle'
            pos_jungle = (0,0.06)

            context_sea_txt = '2. Undersea'
            pos_sea = (0,0)

        else:
            context_sea_txt = '1. Undersea'
            pos_sea = (0,0.06)

            context_jungle_txt = '2. Jungle'
            pos_jungle = (0,0)
    CodeComponent code_scene_screens
      Code Type = Py
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      Begin Routine:
        import pandas as pd

        # === LOAD STIM LIST ===
        stim_list = f"stimuli/stim_lists/stimuli_list_sub_{subnum}_run_1.csv"

        if not os.path.exists(stim_list):
            raise FileNotFoundError(f"Stim list not found: {stim_list}")

        df = pd.read_csv(stim_list)

        # === CONVERT FILE NAMES → LOGICAL IDS ===
        def extract_scene_id(filename):
            name = os.path.basename(filename)

            if name.startswith('JA'):
                return 'JA'
            elif name.startswith('JB'):
                return 'JB'
            elif name.startswith('UA'):
                return 'UA'
            elif name.startswith('UB'):
                return 'UB'
            else:
                raise ValueError(f"Unexpected filename: {filename}")

        df['scene_id'] = df['scene_stimulus'].apply(extract_scene_id)

        # === BUILD LABEL DICTIONARY ===
        labels = dict(zip(df['scene_id'], df['scene_label']))

        print("DEBUG labels:", labels)

        # === CREATE LABEL TEXT ===

        # Jungle
        if key_JA in ['y', '1']:
            jungle_lbl_text = f"1. {labels['JA']}\n2. {labels['JB']}"
        else:
            jungle_lbl_text = f"1. {labels['JB']}\n2. {labels['JA']}"

        # Sea
        if key_UA in ['y', '1']:
            sea_lbl_text = f"1. {labels['UA']}\n2. {labels['UB']}"
        else:
            sea_lbl_text = f"1. {labels['UB']}\n2. {labels['UA']}"
    CodeComponent code_printexpInfo
      Code Type = Py
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      Begin Experiment:
        print('participant:', expInfo.get('participant'))
        print('session:', expInfo.get('session'))
        print('group:', expInfo.get('group'))
        print('delay:', expInfo.get('delay'))
        print('mode:', expInfo.get('mode'))
    CodeComponent code_useFBO
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        win.useFBO=False
    CodeComponent code_def_glob_vars
      Code Type = Py
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      Begin Experiment:
        chosen_cont_color = ''
        chosen_cont = ''
  Routine context_confidence
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    CodeComponent code_get_context_choice
      Code Type = Py
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      Begin Routine:
        key_resp_context_conf.keys = []
        key_resp_context_conf.rt = []
    SliderComponent slider_context_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent text_context_choice
      color [set every repeat] = $chosen_cont_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.08
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_cont
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    KeyboardComponent key_resp_context_conf
      allowedKeys [set every repeat] = confidence_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine scene_confidence
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    CodeComponent code_get_chosen_scene
      Code Type = Py
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      Before Experiment:
        run_stim = []
        l_k = None
      Begin Routine:
        # get the chosen scene to present above confidence scales
        print("SCENE RESPONSE:", key_resp_scenes.keys)

        print("key_JA:", key_JA)
        print("key_JB:", key_JB)

        print("key_UA:", key_UA)
        print("key_UB:", key_UB)


        if scene_cat == 'Jungle':
            if key_resp_scenes.keys == key_JA:
                chosen_scene = labels['JA']
            elif key_resp_scenes.keys == key_JB:
                chosen_scene = labels['JB']
            elif key_resp_scenes.keys == None:
                chosen_scene = 'Nothing was chosen'
                cur_color = 'White'
        elif scene_cat == 'Undersea':
            if key_resp_scenes.keys == key_UA:
                chosen_scene = labels['UA']
            elif key_resp_scenes.keys == key_UB:
                chosen_scene = labels['UB']
            elif key_resp_scenes.keys == None:
                chosen_scene = 'Nothing was chosen'
                cur_color = 'White'
    TextComponent text_chosen_scene
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_scene
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    SliderComponent slider_scene_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_scene_conf
      allowedKeys [set every repeat] = confidence_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine rest_between_runs
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    TextComponent text_run_rest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Good Job! You can rest for a moment.

        When you're ready to continue, press the SPACEBAR key.
    KeyboardComponent key_resp_run_rest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine buffer
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Buffer!!!
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    KeyboardComponent key_resp_buffer
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Py
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      End Routine:
        print('buffer is done')
  Routine code_buffer
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    CodeComponent code_buffer_test
      Code Type = Py
      disabled = True
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      Begin Experiment:
        # --- LOAD CSV AND CREATE LABEL DICTIONARY ---

        import csv

        jungle_lbl_text = ''
        sea_lbl_text = ''

        labels = {}

        # build filename (same logic as JS)
        name_list = f"stimuli/cond_lists/scene_names_sub_{subnum}.csv"

        # read CSV
        with open(name_list, newline='', encoding='utf-8') as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                stimulus = row['scene_stimulus']
                label = row['scene_label']

                if stimulus and label:
                    labels[stimulus] = label

        # DEBUG (optional)
        print("Labels dictionary:", labels)


        # --- GENERATE LABEL TEXT BASED ON COUNTERBALANCING ---

        # Jungle
        if key_J1 == '1':
            jungle_lbl_text = f"1. {labels['J1']}\n2. {labels['J2']}"
        elif key_J1 == '2':
            jungle_lbl_text = f"1. {labels['J2']}\n2. {labels['J1']}"

        # Sea
        if key_U1 == '1':
            sea_lbl_text = f"1. {labels['U1']}\n2. {labels['U2']}"
        elif key_U1 == '2':
            sea_lbl_text = f"1. {labels['U2']}\n2. {labels['U1']}"

        # DEBUG
        print("Jungle labels:", jungle_lbl_text)
        print("Sea labels:", sea_lbl_text)
  Routine set_rows
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        # Debug prints (optional)
        print("run:", run)
        print("run_stim:", run_stim)

        # Convert run to integer (Python equivalent of parseInt)
        runIndex = int(run)

        print("runIndex:", runIndex)

        # Select rows safely
        if 0 <= runIndex < len(run_stim):
            selected_rows = run_stim[runIndex]
            print("selected_rows:", selected_rows)
        else:
            print(f"ERROR: Invalid run index {runIndex} for run_stim (length {len(run_stim)})")

        # Print all runs
        print("run_stim length:", len(run_stim))

        for index, run_item in enumerate(run_stim):
            print(f"run_stim[{index}]:", run_item)

        # Check for None / undefined equivalent
        for index, arr in enumerate(run_stim):
            if arr is None:
                print(f"ERROR: run_stim[{index}] is None")
            else:
                print(f"run_stim[{index}]:", arr)

        # Additional debug prints
        print('trials loop is going to start now!')
        print("Run value before loop:", run)
        print("pos_sea:", pos_sea)
        print("context jungle text:", context_jungle_txt)
  Routine forked_instructions
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    CodeComponent code_end_inst
      Code Type = Py
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      Begin Routine:
        # present either move to a new encoding set or end of experiment

        if expInfo['group'] == 'A' and expInfo['delay'] == 'short':

            # instructions to move to a new encoding set
            # (currently using single-session version)

            end_inst = (
                "Congratulations! You are done with the experiment!\n"
                "We thank you for your participation.\n\n"
                "Press SPACEBAR and then 'OK' in the prompted window to receive a Prolific completion code."
            )

            print("end_inst in if:", end_inst)

        else:
            end_inst = (
                "Congratulations! You have finished our two-session experiment!\n"
                "We thank you for your participation.\n"
                "Press SPACEBAR and then 'OK' in the prompted window to receive a Prolific completion code."
            )
    TextComponent text_end_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_inst
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    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_url
      Code Type = Both
      disabled = True
      Begin JS Experiment:
        let completion_url;
      End JS Routine:
        two_sess = false;
        if (two_sess == true){
            if (expInfo['group']==='A'){
                if (expInfo['delay']==='short'){
                    expInfo['delay'] ='long';
                    console.log('delay changed to:',expInfo['delay']);
                    completion_url = 'https://run.pavlovia.org/nitzanlubi/sbl_encoding_exp/?group='
                        + expInfo['group']
                        + '&participant=' + expInfo['participant']
                        + '&session=' + expInfo['session']
                        + '&delay=' + expInfo['delay'];
                    console.log('completion_url:',completion_url);
                    }else{
                        completion_url = 'https://app.prolific.com/submissions/complete?cc=C14LKWF2';
                        }
                }
            }else{
                completion_url = 'https://app.prolific.com/submissions/complete?cc=CUFOIWKV';
                }

        console.log('url again:',completion_url);
        //window.location.href = completion_url;
        psychoJS.setRedirectUrls(completion_url, '');
  Routine set_instructions
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    CodeComponent code_set_ret_inst
      Code Type = Py
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  Routine ret_inst_scr
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will see the items (animals and objects) you saw in the previous item-scene association task (if this is your second session, the last task from your first session).

        During the presentation of each item, imagine the background scene where the item appeared in as much detail as possible.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank3000
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    TextComponent text_blank3000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +
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  Routine blank1000
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine blank500
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ret_inst_2
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  Routine ret_inst2
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    TextComponent text_instructions_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        After the item disappears you will answer the memory questions and confidence ratings about the scene. At this point please stop recalling the scene and just report what you chose to imagine.

        PLEASE TRY USING THE FULL CONFIDENCE RATING SCALE:

        "1. not confident": choose this option if you had no idea whatsoever which type and/or specific scene was associated with the item.

        "2.somewhat confident": choose this when you had some recollection or a hunch but you're not certain about it.

        "3.very confident": Choose this when you're quite certain about your choices.

        Press SPACEBAR to start the task.
    KeyboardComponent key_resp_start_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine scene_names_reminder
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    TextComponent text_reminder
      letterHeight = 0.035
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = Reminder: these are the names of the four scenes
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    ImageComponent image1
      image [set every repeat] = stimuli/scenes/JA_1.jpg
      pos = (-.35, .15)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = stimuli/scenes/JB_1.jpg
      pos = (.35, .15)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = stimuli/scenes/UA_1.jpg
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = stimuli/scenes/UB_1.jpg
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox1
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels['JA']
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    TextboxComponent textbox2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels['JB']
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    TextboxComponent textbox3
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels['UA']
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    TextboxComponent textbox4
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels['UB']
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    KeyboardComponent key_reminder
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blank3000_2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Starting in a moment

        Good luck!
Flow
  Routine subs_rand_vars
  Routine set_instructions
  Routine ret_inst_scr
  Routine ret_inst2
  Routine scene_names_reminder
  Routine blank3000_2
  Routine create_runs_stim_div
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs_params.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'run': 0},
      {'run': 1},
      {'run': 2},
      {'run': 3}]
    Routine set_rows
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $run_stim[run]
      conditionsFile = $'stimuli/stim_lists/stimuli_list_sub_' + str(int(expInfo['participant'])) + '_run_1.csv'
      loopType = sequential
      nReps = 1
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      conditions:
        [{'scene_stimulus': 'stimuli/scenes/desert/desert_A.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/deer.png', 'congruency': 'cs', 'scene_cat': 'Desert', 'scene_label': 'Negvi', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/desert/desert_B.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/elephant.png', 'congruency': 'cs', 'scene_cat': 'Desert', 'scene_label': 'Somar', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/ocean/ocean_B.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/lion1.png', 'congruency': 'ci', 'scene_cat': 'Ocean', 'scene_label': 'Tulon', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/desert/desert_A.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/leopard.png', 'congruency': 'cs', 'scene_cat': 'Ocean', 'scene_label': 'Negvi', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/desert/desert_B.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/zebra.png', 'congruency': 'cs', 'scene_cat': 'Desert', 'scene_label': 'Somar', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/ocean/ocean_A.jpeg', 'item_stimulus': 'stimuli/items/objects/desert/binoculars.png', 'congruency': 'ci', 'scene_cat': 'Ocean', 'scene_label': 'Malbow', 'item_cat': 'd', 'item_type': 'o'}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
      Routine item_imagine_scene
      Routine blank1000
      Routine select_context
      Routine blank500
      Routine context_confidence
      Routine blank1000
      Routine select_scene_name
      Routine blank500
      Routine scene_confidence
      Routine blank3000
    LoopTerminator trials
    Routine is_last
    LoopInitiator show_rest_screen loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = last_run
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      Routine rest_between_runs
      Routine blank3000
    LoopTerminator show_rest_screen
  LoopTerminator runs
  Routine ret_end_screen
  Routine forked_instructions
