PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1300, 800]
  expName = TEST_training_task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions_overall
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the items and scenes memory experiment!

        In this first task, you will learn the names and visual details of four scenes.

        You will then practice visualizing the scenes in detail.

        Finally, you will have a short practice run of the next tasks which you will undertake later in the study session.

        Press SPACEBAR to continue.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine p1_instruction
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    TextComponent txt_insturctions_p1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1.
        In this part, you will learn about four scenes.

        Please pay attention to the name and to the visual details of each scene. There are four images for each scene, so focus on the consistent characteristics of each scene. The name will appear above the image.

        Press SPACEBAR to go to the next scene after you have fully learned the current scene.

        You will be asked to name and visualize them in detail later on.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1
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    ImageComponent trial_image
      image [set every repeat] = $scene_image
      pos = (0, -.05)
      size = (1.2, 0.675)
      startVal [time (s)] = 0.0
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    TextComponent text_scenename
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_name
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    TextComponent txt_memorize
      letterHeight = 0.04
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = Try to memorize the name and the visual details of the scene.
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    KeyboardComponent spaceKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine p1_3_instructions
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    TextComponent text_instructions_p1_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will view all four scenes at once to compare them.

        Please pay attention to the name and to the visual details of each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_compare
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    ImageComponent img1
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1
      letterHeight = 0.05
      pos = (-.35, .42)
      startVal [time (s)] = 0.0
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    TextComponent label2
      letterHeight = 0.05
      pos = (.35, .42)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent label3
      letterHeight = 0.05
      pos = (-.35, -.08)
      startVal [time (s)] = 0.0
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    TextComponent label4
      letterHeight = 0.05
      pos = (.35, -0.08)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # image + name pairs
        stimuli = [
            ("TESTstimuli/TESTscenes/JA_1.png", "Tulon"),
            ("TESTstimuli/TESTscenes/JB_1.png", "Malbow"),
            ("TESTstimuli/TESTscenes/UA_1.png", "Negvi"),
            ("TESTstimuli/TESTscenes/UB_1.png", "Somar")
        ]

        # randomize order
        random.shuffle(stimuli)

        # assign to positions
        img1.image, label1.text = stimuli[0]
        img2.image, label2.text = stimuli[1]
        img3.image, label3.text = stimuli[2]
        img4.image, label4.text = stimuli[3]
    KeyboardComponent key_p1_compare
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_compare_2
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    ImageComponent img1_2
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2_2
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3_2
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4_2
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1_2
      letterHeight = 0.05
      pos = (-.35, .42)
      startVal [time (s)] = 0.0
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    TextComponent label2_2
      letterHeight = 0.05
      pos = (.35, .42)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent label3_2
      letterHeight = 0.05
      pos = (-.35, -.08)
      startVal [time (s)] = 0.0
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    TextComponent label4_2
      letterHeight = 0.05
      pos = (.35, -0.08)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli_2
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # image + name pairs
        stimuli = [
            ("TESTstimuli/TESTscenes/JA_3.png", "Tulon"),
            ("TESTstimuli/TESTscenes/JB_3.png", "Malbow"),
            ("TESTstimuli/TESTscenes/UA_3.png", "Negvi"),
            ("TESTstimuli/TESTscenes/UB_3.png", "Somar")
        ]

        # randomize order
        random.shuffle(stimuli)

        # assign to positions
        img1_2.image, label1_2.text = stimuli[0]
        img2_2.image, label2_2.text = stimuli[1]
        img3_2.image, label3_2.text = stimuli[2]
        img4_2.image, label4_2.text = stimuli[3]
    KeyboardComponent key_p1_compare_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_instructions
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    TextComponent text_p1_2_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see all four images for each scene on one screen. Focus on the similar characteristics consistent across images.

        When you are done, press the SPACEBAR to continue.
    KeyboardComponent key_p1_2_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_showALL
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    ImageComponent imgA
      pos = (-.35, .20)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgB
      pos = (.35, .2)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgC
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgD
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        print("FINAL LIST:", currentGroupImages)

        imgA.setImage(currentGroupImages[0])
        imgB.setImage(currentGroupImages[1])
        imgC.setImage(currentGroupImages[2])
        imgD.setImage(currentGroupImages[3])
  Routine groupStart
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        currentGroupImages = []
        print("NEW GROUP ----------------")
  Routine p1_2_showALL_3
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    ImageComponent img1_showALL
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2_showALL
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3_showALL
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4_showALL
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1_showALL
      letterHeight = 0.05
      pos = (0.0, 0.42)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli_3
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # image + name pairs
        stimuli = [
            ("TESTstimuli/TESTscenes/JA_1.png", "Tulon"),
            ("TESTstimuli/TESTscenes/JB_1.png", "Malbow"),
            ("TESTstimuli/TESTscenes/UA_1.png", "Negvi"),
            ("TESTstimuli/TESTscenes/UB_1.png", "Somar")
        ]

        # randomize order
        random.shuffle(stimuli)

        # assign to positions
        img1_showALL.image = stimuli[0]
        img2_showALL.image = stimuli[1]
        img3_showALL.image = stimuli[2]
        img4_showALL.image = stimuli[3]
    KeyboardComponent key_p1_compare_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_overall
  Routine p1_instruction
  LoopInitiator groups_loop loopType="TrialHandler"
    conditionsFile = groups.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conditionFile': 'scenes_group1.xlsx'},
      {'conditionFile': 'scenes_group2.xlsx'},
      {'conditionFile': 'scenes_group3.xlsx'},
      {'conditionFile': 'scenes_group4.xlsx'}]
    Routine p1
  LoopTerminator trials_loop
  LoopTerminator groups_loop
  LoopInitiator groups_loop_showALL loopType="TrialHandler"
    conditionsFile = groups.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conditionFile': 'scenes_group1.xlsx'},
      {'conditionFile': 'scenes_group2.xlsx'},
      {'conditionFile': 'scenes_group3.xlsx'},
      {'conditionFile': 'scenes_group4.xlsx'}]
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $conditionFile
      loopType = random
      nReps = 1
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      Routine p1_2_instructions
    LoopTerminator groups_loop_showALL
    Routine p1_2_showALL_3
    Routine p1_3_instructions
    Routine p1_compare
    Routine p1_compare_2
