PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = TEST_training_task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions_overall
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the items and scenes memory experiment!

        In this first task, you will learn the names and visual details of four scenes.

        You will then practice visualizing the scenes in detail.

        Finally, you will have a short practice run of the next tasks which you will undertake later in the study session.

        Press SPACEBAR to continue.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent init_counterbalance
      Code Type = Auto->JS
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      Begin Experiment:
        # participant number
        subnum = int(expInfo['participant'])

        # base order
        labels = ["JA", "JB", "UA", "UB"]

        # counterbalance order
        shift = subnum % 4
        ordered_labels = labels[shift:] + labels[:shift]

        print("Visualization order:", ordered_labels)
  Routine p1_instruction
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    TextComponent txt_insturctions_p1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1.
        In this part, you will learn about four scenes.

        Please pay attention to the name and to the visual details of each scene. There are four images for each scene, so focus on the consistent characteristics of each scene. The name will appear above the image.

        Press SPACEBAR to go to the next scene after you have fully learned the current scene.

        You will be asked to name and visualize them in detail later on.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1
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    ImageComponent trial_image
      image [set every repeat] = $scene_image
      pos = (0, -.05)
      size = (1.2, 0.675)
      startVal [time (s)] = 0.0
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    TextComponent text_scenename
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_name
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    TextComponent txt_memorize
      letterHeight = 0.04
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = Try to memorize the name and the visual details of the scene.
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    KeyboardComponent spaceKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine p1_compare
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    ImageComponent img1
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1
      letterHeight = 0.05
      pos = (-.35, .42)
      startVal [time (s)] = 0.0
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    TextComponent label2
      letterHeight = 0.05
      pos = (.35, .42)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent label3
      letterHeight = 0.05
      pos = (-.35, -.08)
      startVal [time (s)] = 0.0
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    TextComponent label4
      letterHeight = 0.05
      pos = (.35, -0.08)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli
      Code Type = Py
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      Begin Routine:
        import random

        # image + name pairs
        stimuli = [
            ("TESTstimuli/TESTscenes/JA_1.jpg", "Tulon"),
            ("TESTstimuli/TESTscenes/JB_1.jpg", "Malbow"),
            ("TESTstimuli/TESTscenes/UA_1.jpg", "Negvi"),
            ("TESTstimuli/TESTscenes/UB_1.jpg", "Somar")
        ]

        # randomize order
        random.shuffle(stimuli)

        # assign to positions
        img1.image, label1.text = stimuli[0]
        img2.image, label2.text = stimuli[1]
        img3.image, label3.text = stimuli[2]
        img4.image, label4.text = stimuli[3]
    KeyboardComponent key_p1_compare
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_compare_2
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    ImageComponent img1_2
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2_2
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3_2
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4_2
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1_2
      letterHeight = 0.05
      pos = (-.35, .42)
      startVal [time (s)] = 0.0
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    TextComponent label2_2
      letterHeight = 0.05
      pos = (.35, .42)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent label3_2
      letterHeight = 0.05
      pos = (-.35, -.08)
      startVal [time (s)] = 0.0
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    TextComponent label4_2
      letterHeight = 0.05
      pos = (.35, -0.08)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli_2
      Code Type = Py
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      Begin Routine:
        import random

        # image + name pairs
        stimuli = [
            ("TESTstimuli/TESTscenes/JA_3.jpg", "Tulon"),
            ("TESTstimuli/TESTscenes/JB_3.jpg", "Malbow"),
            ("TESTstimuli/TESTscenes/UA_3.jpg", "Negvi"),
            ("TESTstimuli/TESTscenes/UB_3.jpg", "Somar")
        ]

        # randomize order
        random.shuffle(stimuli)

        # assign to positions
        img1_2.image, label1_2.text = stimuli[0]
        img2_2.image, label2_2.text = stimuli[1]
        img3_2.image, label3_2.text = stimuli[2]
        img4_2.image, label4_2.text = stimuli[3]
    KeyboardComponent key_p1_compare_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_instructions
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    TextComponent text_p1_2_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see all three images for each scene on one screen. Focus on the similar characteristics consistent across images.

        When you are done, press the SPACEBAR to continue.
    KeyboardComponent key_p1_2_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_showALL
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    ImageComponent imgA
      pos = (-.35, .20)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgB
      pos = (.35, .2)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgC
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgD
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        print("FINAL LIST:", currentGroupImages)

        imgA.setImage(currentGroupImages[0])
        imgB.setImage(currentGroupImages[1])
        imgC.setImage(currentGroupImages[2])
        imgD.setImage(currentGroupImages[3])
  Routine groupStart
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        currentGroupImages = []
        print("NEW GROUP ----------------")
  Routine p1_2_showALL_3
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    ImageComponent img1_showALL
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2_showALL
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3_showALL
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4_showALL
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1_showALL
      letterHeight = 0.05
      pos = (0.0, 0.42)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli_3
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # image + name pairs
        stimuli = [
            ("TESTstimuli/TESTscenes/JA_1.jpg", "Tulon"),
            ("TESTstimuli/TESTscenes/JB_1.jpg", "Malbow"),
            ("TESTstimuli/TESTscenes/UA_1.jpg", "Negvi"),
            ("TESTstimuli/TESTscenes/UB_1.jpg", "Somar")
        ]

        # randomize order
        random.shuffle(stimuli)

        # assign to positions
        img1_showALL.image = stimuli[0]
        img2_showALL.image = stimuli[1]
        img3_showALL.image = stimuli[2]
        img4_showALL.image = stimuli[3]
    KeyboardComponent key_p1_compare_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_showALL_2
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    ImageComponent image_left
      image [set every repeat] = $Image1
      pos = (-0.75, -0.05)
      size = (0.7, 0.39375)
      startVal [time (s)] = 0.0
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    ImageComponent image_center
      image [set every repeat] = $Image2
      pos = (0, -0.05)
      size = (0.7, 0.39375)
      startVal [time (s)] = 0.0
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    ImageComponent image_right
      image [set every repeat] = $Image3
      pos = (0.75, -0.05)
      size = (0.7, 0.39375)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_p1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent txt_scenename_showALL
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_name_showALL
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  Routine p2_instructions
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    TextComponent text_instructions_part2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 2.

        In this part, you will be asked to choose the correct name for each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_3_instructions_close
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    TextComponent text_instructions_p1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will view all four scenes at once to compare them. These are the close-up views of each.

        Please pay attention to the name and to the visual details of each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_3_instructions_wide
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    TextComponent text_instructions_p1_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will view all four scenes at once to compare them. These are the wide-shot views of each.

        Please pay attention to the name and to the visual details of each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p2
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Randomly pick which image variant (1, 2, or 3) to show
        image_variant = random.choice([1, 2, 3])

        # Build the filename based on the correct scene
        scene_codes = ['JA', 'JB', 'UA', 'UB']
        current_scene = scene_codes[correct_key - 1]

        # Use .jpg extension and include the folder path
        current_image = f'TESTstimuli/TESTscenes/{current_scene}_{image_variant}.jpg'
    ImageComponent scene_part2
      image [set every repeat] = $current_image
      size = (960, 540)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine part2_question
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    CodeComponent code_part2_txt
      Code Type = Auto->JS
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      Begin Routine:
        text_part2_qst = 'What is the name of the scene?\n\n1. Tulon\n2. Malbow\n3. Negvi\n4. Somar'
    TextComponent text_part2_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_part2_qst
      wrapWidth = 1.2
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    KeyboardComponent key_part2
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent code_part2
      Code Type = Auto->JS
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      Begin Experiment:
        total_acc = 0
        logic_vec = [False]*4
      End Routine:
        if(key_part2.corr ==1):
            logic_vec[correct_key-1] = True
        elif (key_part2.corr ==0):
            logic_vec[correct_key-1] = False

        if all(logic_vec):
            part2_loop.finished = True
  Routine part2_feedback
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    CodeComponent code_part2_feedback
      Code Type = Py
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      Begin Experiment:
        msg="doh!"
      Begin Routine:
        if not key_part2.keys :
            msg="Failed to respond"
        elif key_part2.corr:
            msg="Correct!"
        else:
            msg="Incorrect!"
    TextComponent text_part2_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine part3_instructions
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    TextComponent text_part3_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 3.

        In this part, you will practice visualizing the scenes in detail.

        Press SPACEBAR to continue.
    KeyboardComponent key_part3_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine part3_instructions_2
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    TextComponent text_part3_instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 3.

        In this part, you will practice visualizing the scenes in detail.

        Press SPACEBAR to continue.
    KeyboardComponent key_part3_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine OLD_reset_vis_vars
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    CodeComponent code_reset_vars
      Code Type = Py
      disabled = True
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      Begin Experiment:
        pass
      Begin Routine:
        lbl = labelStr[count]
        vis_table = f"TESTstimuli/vis_lists/visualization_{lbl}.xlsx"

        count += 1
  Routine OLD_skip_answered_questions
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    CodeComponent code_skip_qst
      Code Type = Py
      disabled = True
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      Begin Routine:
        # define visualization index early so all routines can use it
        qst_num = visualization_loop.thisN
        if logic_vec_ans[qst_num] is True:
            skipTrial = True
            print('should skip question', qst_num)
        else:
            skipTrial = False
  Routine OLD_blank1000
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    CodeComponent code_skip_1
      Code Type = Py
      disabled = True
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine OLD_part3_rate
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    CodeComponent code_skip_3
      Code Type = Py
      disabled = True
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text_rate
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        How vivid was your visualization?

        Answer the question by pressing "1", "2", "3", or "4"

        1. could not visualize
        2. some visualization
        3. good visualization
        4. vivid visualization
    KeyboardComponent key_rate
      allowedKeys = '1','2','3','4'
      correctAns = '3', '4'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine OLD_part3_visualize
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    CodeComponent code_skip_2
      Code Type = Py
      disabled = True
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      Begin Routine:
        # get current scene label from reset_vis_vars logic
        lbl = ordered_labels[count]
        # recreate OG scene name variable
        label_map = {
            "JA": "Tulon",
            "JB": "Malbow",
            "UA": "Negvi",
            "UB": "Somar"
        }

        label_current = label_map[lbl]
        # assign left/right images for visualization
        if lbl == "JA":
            scene_left = "TESTstimuli/TESTscenes/JA_1.jpg"
            scene_right = "TESTstimuli/TESTscenes/JA_3.jpg"

        elif lbl == "JB":
            scene_left = "TESTstimuli/TESTscenes/JB_1.jpg"
            scene_right = "TESTstimuli/TESTscenes/JB_3.jpg"

        elif lbl == "UA":
            scene_left = "TESTstimuli/TESTscenes/UA_1.jpg"
            scene_right = "TESTstimuli/TESTscenes/UA_3.jpg"

        elif lbl == "UB":
            scene_left = "TESTstimuli/TESTscenes/UB_1.jpg"
            scene_right = "TESTstimuli/TESTscenes/UB_3.jpg"

        # KEEP existing skip logic
        if skipTrial:
            continueRoutine = False
    ImageComponent image_vis_left
      image [set every repeat] = $scene_left
      pos = (-0.35, 0)
      size = (0.5, 0.28125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_vis_right
      image [set every repeat] = $scene_right
      pos = (0.35, 0)
      size = (0.5, 0.28125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_visualize
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please visualize the scene in as much detail as possible
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    TextboxComponent textbox_scene_name
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $label_current
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  Routine part3_question
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    CodeComponent code_skip_4
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_option
      letterHeight = 0.05
      pos = (0, -.18)
      startVal [time (s)] = 0.0
      text [set every repeat] = $options
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    KeyboardComponent key_question
      allowedKeys = '1','2', '3', '4'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
      syncScreenRefresh = False
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  Routine study_again
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    CodeComponent code_skip_5
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        if skipTrial:
            continueRoutine = False
    ImageComponent study_image1
      image [set every repeat] = $scene_again
      size = (960, 540)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent study_name1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_current
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    KeyboardComponent key_sceneLearn_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -.38)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR when you've finishd studying
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Study the scene again
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  Routine msg_next_scene
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    TextComponent text_next_scene
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Good!

        Let's move to the next scene.
  Routine p3_visualize
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    CodeComponent p3_scene_assign
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
        # define scene_again for study_again routine
        if lbl == "JA":
            scene_again = "TESTstimuli/TESTscenes/JA_2.jpg"
        elif lbl == "JB":
            scene_again = "TESTstimuli/TESTscenes/JB_2.jpg"
        elif lbl == "UA":
            scene_again = "TESTstimuli/TESTscenes/UA_2.jpg"
        elif lbl == "UB":
            scene_again = "TESTstimuli/TESTscenes/UB_2.jpg"
    TextComponent text_p3_visualize
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Please visualize the scene in as much detail as possible
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    TextboxComponent textbox_scene_name_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $label_current
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  Routine p3_rate
    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
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    TextComponent text_rate_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        How vivid was your visualization?

        Answer the question by pressing "1", "2", "3", or "4"

        1. could not visualize
        2. some visualization
        3. good visualization
        4. vivid visualization
    KeyboardComponent key_rate_2
      allowedKeys = '1','2','3','4'
      correctAns = '3', '4'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine p3_study_again
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
    ImageComponent study_image1_2
      image [set every repeat] = $scene_again
      size = (960, 540)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent study_name1_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_current
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    KeyboardComponent key_sceneLearn
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -.38)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR when you've finished studying
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Study the scene again
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  Routine p3_question
    CodeComponent code_skip
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
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    TextComponent text_question_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_option_2
      letterHeight = 0.05
      pos = (0, -.18)
      startVal [time (s)] = 0.0
      text [set every repeat] = $options
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    KeyboardComponent key_question_2
      allowedKeys = '1','2', '3', '4'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Choose the correct answer
      wrapWidth = 1.2
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    CodeComponent code_part3
      Code Type = Py
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      Begin Routine:
        rate_ans = key_rate_2.keys
        myReps = 1
      End Routine:
        if key_question_2.corr == 1:
            logic_vec_ans[qst_num] = True

            if rate_ans == "3" or rate_ans == "4":
                myReps = 0
            else:
                p3_vis_loop.finished = False
                myReps = 1
        else:
            myReps = 1
            p3_vis_loop.finished = False

        if all(logic_vec_ans) and (rate_ans == "3" or rate_ans == "4"):
            p3_vis_loop.finished = True
  Routine p3_correct_msg
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    TextComponent text_next_scene_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Good!

        Let's move to the next scene.
  Routine p3_skip_answered_questions
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        qst_num = p3_vis_loop.thisN

        if logic_vec_ans[qst_num] is True:
            skipTrial = True
            print('should skip question', qst_num)
        else:
            skipTrial = False
  Routine p3_blank1000
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    CodeComponent code_skip_6
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine p3_reset_vis_vars
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        count = 0
        logic_vec_ans = [False]*4
      Begin Routine:
        # Scene order
        labelStr = ["JA", "JB", "UA", "UB"]

        # randomize once
        if count == 0:
            import random
            ordered_labels = labelStr.copy()
            random.shuffle(ordered_labels)
            print("Visualization order:", ordered_labels)

        # get current label
        lbl = ordered_labels[count]

        # build vis file
        vis_table = f"TESTstimuli/vis_lists/visualization_{lbl}.xlsx"

        # create display name
        label_map = {
            "JA": "Tulon",
            "JB": "Malbow",
            "UA": "Negvi",
            "UB": "Somar"
        }
        label_current = label_map[lbl]

        # bookkeeping
        logic_vec_ans = [False]*4

        count += 1
        last_scene = 0 if count == 4 else 1
  Routine p3_init
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        logic_vec_ans = [False]*4
        count = 0
        labelStr = ["JA", "JB", "UA", "UB"]
        ordered_labels = labelStr.copy()
        random.shuffle(ordered_labels)
  Routine p1_betw_scene
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    TextComponent text_p1_betw_scene
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Now focus on the next scene.
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  Routine p4_instructions
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Flow
  Routine instructions_overall
  Routine p1_instruction
  LoopInitiator groups_loop loopType="TrialHandler"
    conditionsFile = groups.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conditionFile': 'scenes_group1.xlsx'},
      {'conditionFile': 'scenes_group2.xlsx'},
      {'conditionFile': 'scenes_group3.xlsx'},
      {'conditionFile': 'scenes_group4.xlsx'}]
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $conditionFile
      loopType = random
      nReps = 1
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      Routine p1
    LoopTerminator trials_loop
    Routine p1_betw_scene
  LoopTerminator groups_loop
  Routine p1_2_instructions
  LoopInitiator groups_loop_p1_2 loopType="TrialHandler"
    conditionsFile = conditions_part2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'group': 'JA', 'Image1': 'JA_1.jpg', 'Image2': 'JA_2.jpg', 'Image3': 'JA_3.jpg'},
      {'group': 'JB', 'Image1': 'JB_1.jpg', 'Image2': 'JB_2.jpg', 'Image3': 'JB_3.jpg'},
      {'group': 'UA', 'Image1': 'UA_1.jpg', 'Image2': 'UA_2.jpg', 'Image3': 'UA_3.jpg'},
      {'group': 'UB', 'Image1': 'UB_1.jpg', 'Image2': 'UB_2.jpg', 'Image3': 'UB_3.jpg'}]
    Routine p1_2_showALL_2
  LoopTerminator groups_loop_p1_2
  Routine p1_3_instructions_wide
  Routine p1_compare
  Routine p1_3_instructions_close
  Routine p1_compare_2
  Routine p2_instructions
  LoopInitiator part2_loop loopType="TrialHandler"
    conditionsFile = scene_stims_new.xlsx
    loopType = random
    nReps = 999
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    Routine p2
    Routine part2_question
    Routine part2_feedback
  LoopTerminator part2_loop
  Routine part3_instructions_2
  LoopInitiator p3_scene_loop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine p3_reset_vis_vars
    LoopInitiator p3_vis_loop loopType="TrialHandler"
      conditionsFile = $vis_table
      loopType = random
      nReps = 99
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      Routine p3_skip_answered_questions
      Routine p3_blank1000
      Routine p3_visualize
      Routine p3_rate
      Routine p3_question
      LoopInitiator skip_loop loopType="TrialHandler"
        loopType = random
        nReps = myReps
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        Routine p3_study_again
      LoopTerminator skip_loop
    LoopTerminator p3_vis_loop
    LoopInitiator loop_msg loopType="TrialHandler"
      loopType = random
      nReps = last_scene
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      Routine p3_correct_msg
    LoopTerminator loop_msg
  LoopTerminator p3_scene_loop
  Routine p4_instructions
