PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = "data/%(participant)s_%(date)s"
  Experiment info = {'participant': "''", 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  color = -1.0000, -1.0000, -1.0000
  expName = TEST_training_task
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine instructions_overall
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the items and scenes memory experiment!

        In this first task, you will learn the names and visual details of four scenes.

        You will then practice visualizing the scenes in detail.

        Finally, you will have a short practice run of the next tasks which you will undertake later in the study session.

        Press SPACEBAR to continue.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent init_counterbalance
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import random

        count = 0
        skipTrial = False

        cond_file = f"stimuli/cond_lists/scene_names_sub_{expInfo['participant']}.csv"
        df = pd.read_csv(cond_file)

        scene_JA_lbl = df.loc[df['scene_stimulus']=='JA','scene_label'].values[0]
        scene_JB_lbl = df.loc[df['scene_stimulus']=='JB','scene_label'].values[0]
        scene_UA_lbl = df.loc[df['scene_stimulus']=='UA','scene_label'].values[0]
        scene_UB_lbl = df.loc[df['scene_stimulus']=='UB','scene_label'].values[0]
  Routine p1_instruction
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    TextComponent txt_insturctions_p1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1.
        In this part, you will learn about four scenes.

        Please pay attention to the name and to the visual details of each scene. There are three images for each scene, so focus on the consistent characteristics of each scene. The name will appear above the image.

        Press SPACEBAR to go to the next scene after you have fully learned the current scene.

        You will be asked to name and visualize them in detail later on.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1
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    CodeComponent code_present_scene_name
      Code Type = Py
      Begin Experiment:
        templates = {
        'JA': "{name} is a bright tropical rainforest with large buttress-root trees and warm sunlight filtering through the canopy. Visible sunbeams create strong light–shadow contrast on a leaf-covered forest floor, and the space feels open at ground level with sturdy trunks, broad green foliage, and large red and yellow flowers.",

        'JB': "{name} is a cool, mist-filled cloud jungle with soft, diffuse lighting and low visibility. Tall trees and the ground are heavily covered in thick green moss, with moisture clinging to surfaces. The damp, foggy air mutes colors and reduces contrast, creating a consistently hazy and subdued visual environment.",

        'UA': "{name} is a bright, shallow ocean scene with clear blue water and strong sunlight streaming down in visible beams. The seafloor is mostly pale, rippled sand with a few large smooth rocks where small coral clusters grow. The space feels open with high visibility and a warm tropical atmosphere.",

        'UB': "{name} is a cool-toned ocean scene with a riverbed of smooth, rounded pebbles and larger stones rather than sand. The water is slightly hazy with soft, diffuse lighting and no visible sunbeams. Thick green-yellow aquatic plants and muted bluish tones create a more enclosed, freshwater-like atmosphere."
        }
      Begin Routine:
        filename = os.path.basename(scene_image)
        parts = filename.split('_')

        scene_code = parts[1]
        scene_num  = parts[2].split('.')[0]

        name = scene_label_map[scene_code]

        # --- DESCRIPTION: only on first image ---
        if scene_num == '1':
            txt_scene_present = templates[scene_code].format(name=name)
        else:
            txt_scene_present = ""

        # --- NAME: only on second and third images ---
        if scene_num in ['2', '3']:
            txt_scenename = name.upper()
        else:
            txt_scenename = ""
    ImageComponent trial_image
      image [set every repeat] = $scene_image
      pos = (0, -.06)
      size = (None, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent scene_name_part1
      letterHeight = 0.04
      pos [set every repeat] = (0, .34)
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_scene_present
      wrapWidth = 1.6
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    TextComponent text_scenename
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_scenename
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    TextComponent txt_memorize
      letterHeight = 0.04
      pos = (0, -0.44)
      startVal [time (s)] = 0.0
      text = Try to memorize the name and the visual details of the scene.
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    KeyboardComponent spaceKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine p1_compare
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    ImageComponent img1
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1
      letterHeight = 0.05
      pos = (-.35, .42)
      startVal [time (s)] = 0.0
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    TextComponent label2
      letterHeight = 0.05
      pos = (.35, .42)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent label3
      letterHeight = 0.05
      pos = (-.35, -.08)
      startVal [time (s)] = 0.0
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    TextComponent label4
      letterHeight = 0.05
      pos = (.35, -0.08)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli
      Code Type = Py
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      Begin Routine:
        # fixed image paths
        JA_img = "stimuli/scenes/JA_3.jpg"
        JB_img = "stimuli/scenes/JB_2.jpg"
        UA_img = "stimuli/scenes/UA_2.jpg"
        UB_img = "stimuli/scenes/UB_1.jpg"

        # labels pulled from condition list variables created in Begin Experiment
        JA_lbl = scene_JA_lbl
        JB_lbl = scene_JB_lbl
        UA_lbl = scene_UA_lbl
        UB_lbl = scene_UB_lbl

        # fixed layout
        img1.image = JA_img
        label1.text = JA_lbl

        img2.image = JB_img
        label2.text = JB_lbl

        img3.image = UA_img
        label3.text = UA_lbl

        img4.image = UB_img
        label4.text = UB_lbl
    KeyboardComponent key_p1_compare
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_compare_2
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    ImageComponent img1_2
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2_2
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3_2
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4_2
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1_2
      letterHeight = 0.05
      pos = (-.35, .42)
      startVal [time (s)] = 0.0
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    TextComponent label2_2
      letterHeight = 0.05
      pos = (.35, .42)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent label3_2
      letterHeight = 0.05
      pos = (-.35, -.08)
      startVal [time (s)] = 0.0
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    TextComponent label4_2
      letterHeight = 0.05
      pos = (.35, -0.08)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli_2
      Code Type = Py
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      Begin Routine:
        # fixed image paths
        JA_img = "stimuli/scenes/JA_1.jpg"
        JB_img = "stimuli/scenes/JB_3.jpg"
        UA_img = "stimuli/scenes/UA_1.jpg"
        UB_img = "stimuli/scenes/UB_2.jpg"

        # labels pulled from condition list variables created in Begin Experiment
        JA_lbl = scene_JA_lbl
        JB_lbl = scene_JB_lbl
        UA_lbl = scene_UA_lbl
        UB_lbl = scene_UB_lbl

        # fixed layout
        img1_2.image = JA_img
        label1_2.text = JA_lbl

        img2_2.image = JB_img
        label2_2.text = JB_lbl

        img3_2.image = UA_img
        label3_2.text = UA_lbl

        img4_2.image = UB_img
        label4_2.text = UB_lbl
    KeyboardComponent key_p1_compare_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_instructions
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    TextComponent text_p1_2_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see all three images for each scene on one screen. Focus on the similar characteristics consistent across images.

        When you are done, press the SPACEBAR to continue.
    KeyboardComponent key_p1_2_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_showALL
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    ImageComponent imgA
      pos = (-.35, .20)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgB
      pos = (.35, .2)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgC
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent imgD
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        print("FINAL LIST:", currentGroupImages)

        imgA.setImage(currentGroupImages[0])
        imgB.setImage(currentGroupImages[1])
        imgC.setImage(currentGroupImages[2])
        imgD.setImage(currentGroupImages[3])
  Routine groupStart
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        currentGroupImages = []
        print("NEW GROUP ----------------")
  Routine p1_2_showALL_3
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    ImageComponent img1_showALL
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img2_showALL
      pos = (.35, .2)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    ImageComponent img3_showALL
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent img4_showALL
      pos = (.35, -.3)
      size = (0.6, .3375)
      startVal [time (s)] = 0.0
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    TextComponent label1_showALL
      letterHeight = 0.05
      pos = (0.0, 0.42)
      startVal [time (s)] = 0.0
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    CodeComponent setStimuli_3
      Code Type = Py
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      Begin Routine:
        import random

        # image + name pairs
        stimuli = [
            ("stimuli/scenes/JA_1.jpg", "Tulon"),
            ("stimuli/scenes/JB_1.jpg", "Malbow"),
            ("stimuli/scenes/UA_1.jpg", "Negvi"),
            ("stimuli/scenes/UB_1.jpg", "Somar")
        ]

        # randomize order
        random.shuffle(stimuli)

        # assign to positions
        img1_showALL.image = stimuli[0]
        img2_showALL.image = stimuli[1]
        img3_showALL.image = stimuli[2]
        img4_showALL.image = stimuli[3]
    KeyboardComponent key_p1_compare_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_2_showALL_2
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    CodeComponent code_13
      Code Type = Py
      disabled = True
      Begin Routine:
        filename = os.path.basename(scene_image)
        scene_code = filename.split('_')[1]

        txt_scenename = scene_label_map[scene_code].upper()
    ImageComponent image_left
      image [set every repeat] = $Image1
      pos = (-0.38, 0.2)
      size = (0.7, 0.39375)
      startVal [time (s)] = 0.0
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    ImageComponent image_center
      image [set every repeat] = $Image2
      pos = (0, -0.25)
      size = (0.7, 0.39375)
      startVal [time (s)] = 0.0
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    ImageComponent image_right
      image [set every repeat] = $Image3
      pos = (0.38, 0.2)
      size = (0.7, 0.39375)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_p1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent txt_scenename_showALL
      letterHeight = 0.05
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text [set every repeat] = $eval(scene_name_showALL)
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  Routine p2_instructions
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    TextComponent text_instructions_part2
      letterHeight = 0.053
      startVal [time (s)] = 0.0
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      text:
        Part 2.

        In this part, you will be asked to choose the correct name for each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_3_instructions_close
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    TextComponent text_instructions_p1
      letterHeight = 0.053
      startVal [time (s)] = 0.0
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      text:
        Now you will view all four scenes at once to compare them. These are the close-up views of each.

        Please pay attention to the name and to the visual details of each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p1_3_instructions_wide
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    TextComponent text_instructions_p1_3
      letterHeight = 0.053
      startVal [time (s)] = 0.0
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      text:
        Now you will view all four scenes at once to compare them. These are the wide-shot views of each.

        Please pay attention to the name and to the visual details of each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_p1_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p2
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # Randomly pick which image variant (1, 2, or 3) to show
        image_variant = random.choice([1, 2, 3])

        # Build the filename based on the correct scene
        scene_codes = ['JA', 'JB', 'UA', 'UB']
        current_scene = scene_codes[int(correct_key) - 1]

        # Use .jpg extension and include the folder path
        current_image = f'stimuli/scenes/{current_scene}_{image_variant}.jpg'
    ImageComponent scene_part2
      image [set every repeat] = $current_image
      size = (960, 540)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine part2_question
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    CodeComponent code_part2_txt
      Code Type = Py
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      Begin Routine:
        text_part2_qst = (
            "What is the name of the scene?\n\n"
            f"1. {scene_JA_lbl}\n"
            f"2. {scene_JB_lbl}\n"
            f"3. {scene_UA_lbl}\n"
            f"4. {scene_UB_lbl}"
        )
    TextComponent text_part2_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_part2_qst
      wrapWidth = 1.2
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    KeyboardComponent key_part2
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_part2
      Code Type = Py
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      Begin Experiment:
        total_acc = 0
        logic_vec = [False]*4
      End Routine:
        logic_vec[int(correct_key)-1] = key_part2.corr

        if all(logic_vec):
            part2_loop.finished = True
  Routine part2_feedback
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    CodeComponent code_part2_feedback
      Code Type = Py
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      Begin Experiment:
        msg="doh!"
      Begin Routine:
        if not key_part2.keys :
            msg="Failed to respond"
        elif key_part2.corr:
            msg="Correct!"
        else:
            msg="Incorrect!"
    TextComponent text_part2_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine part3_instructions
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    TextComponent text_part3_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 3.

        In this part, you will practice visualizing the scenes in detail.

        Press SPACEBAR to continue.
    KeyboardComponent key_part3_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine part3_instructions_2
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    TextComponent text_part3_instructions_2
      letterHeight = 0.053
      startVal [time (s)] = 0.0
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      text:
        Part 3.

        In this part, you will practice visualizing the scenes in detail.

        Press SPACEBAR to continue.
    KeyboardComponent key_part3_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
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  Routine part3_question
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    CodeComponent code_skip_4
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_option
      letterHeight = 0.05
      pos = (0, -.18)
      startVal [time (s)] = 0.0
      text [set every repeat] = $options
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    KeyboardComponent key_question
      allowedKeys = '1','2', '3', '4'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
      syncScreenRefresh = False
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  Routine msg_next_scene
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    TextComponent text_next_scene
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Good!

        Let's move to the next scene.
  Routine p3_visualize
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    CodeComponent p3_scene_assign
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text_p3_visualize
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Please visualize the scene in as much detail as possible
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    TextboxComponent textbox_scene_name_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $label_current
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  Routine p3_rate
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text_rate_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        How vivid was your visualization?

        Answer the question by pressing "1", "2", "3", or "4"

        1. could not visualize
        2. some visualization
        3. good visualization
        4. vivid visualization
    KeyboardComponent key_rate_2
      allowedKeys = '1','2','3','4'
      correctAns = '3', '4'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine p3_study_again
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        print(scene_left, scene_right)

        if 'skipTrial' in globals() and skipTrial:
            continueRoutine = False
    ImageComponent study_scene_left
      image [set every repeat] = $scene_left
      pos = (-0.40, 0)
      size = (0.7, 0.394)
      startVal [time (s)] = 0.0
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    ImageComponent study_scene_right
      image [set every repeat] = $scene_right
      pos = (0.40, 0)
      size = (0.7, 0.394)
      startVal [time (s)] = 0.0
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    TextComponent study_name1_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_current
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    KeyboardComponent key_sceneLearn
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -.38)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR when you've finished studying
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Study the scene again
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  Routine p3_question
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    CodeComponent code_skip
      Code Type = Py
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      Begin Routine:
        key_question_2.keys = None
        key_question_2.rt = None

        if skipTrial:
            continueRoutine = False
    TextComponent text_question_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_option_2
      letterHeight = 0.045
      pos = (0, -.18)
      startVal [time (s)] = 0.0
      text [set every repeat] = $options
      wrapWidth = 1.2
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    KeyboardComponent key_question_2
      allowedKeys [set every repeat] = '1','2', '3', '4'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Choose the correct answer
      wrapWidth = 1.2
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    CodeComponent code_part3
      Code Type = Py
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      Begin Routine:
        rate_ans = None
        myReps = 1
      End Routine:
        rate_ans = key_rate_2.keys

        if key_question_2.corr == 1:
            logic_vec_ans[int(qst_num) - 1] = True

            if rate_ans == "3" or rate_ans == "4":
                myReps = 0
            else:
                myReps = 1
        else:
            myReps = 1

        # Only use .finished to END loop, not control flow mid-loop
        if all(logic_vec_ans) and (rate_ans == "3" or rate_ans == "4"):
            p3_vis_loop.finished = True
  Routine p3_correct_msg
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    TextComponent text_next_scene_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Good!

        Let's move to the next scene.
  Routine p3_skip_answered_questions
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        if qst_num is not None and qst_num != '':
            idx = int(qst_num) - 1

            if 0 <= idx < len(logic_vec_ans):
                if logic_vec_ans[idx]:
                    skipTrial = True
                    print('should skip question', qst_num)
                    print("qst_num:", qst_num, "skip:", logic_vec_ans[idx])
                else:
                    skipTrial = False
            else:
                skipTrial = False
        else:
            skipTrial = False

            # force PsychoPy to load image into GPU BEFORE drawing
        _ = visual.ImageStim(win, image=scene_left)
        _ = visual.ImageStim(win, image=scene_right)
  Routine p3_blank1000
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    CodeComponent code_skip_6
      Code Type = Py
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      Begin Routine:
        if skipTrial:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine p3_reset_vis_vars
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        count = 0
        logic_vec_ans = [False]*4
      Begin Routine:
        # scene order
        labelStr = ["JA", "JB", "UA", "UB"]

        # randomize order only once
        if count == 0:
            ordered_labels = labelStr.copy()
            random.shuffle(ordered_labels)
            print("Visualization order:", ordered_labels)

        # get current scene
        lbl = ordered_labels[count]

        # load correct participant visualization file
        vis_table = f"stimuli/vis_lists/visualization_{lbl}_sub_{expInfo['participant']}.csv"

        # get correct scene name from condition list
        if lbl == "JA":
            label_current = scene_JA_lbl
        elif lbl == "JB":
            label_current = scene_JB_lbl
        elif lbl == "UA":
            label_current = scene_UA_lbl
        elif lbl == "UB":
            label_current = scene_UB_lbl

        # bookkeeping
        logic_vec_ans = [False] * 4

        # advance scene counter
        count += 1

        # mark last scene
        last_scene = 0 if count >= 4 else 1
  Routine p3_init
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        logic_vec_ans = [False]*4
        count = 0
        labelStr = ["JA", "JB", "UA", "UB"]
        ordered_labels = labelStr.copy()
        random.shuffle(ordered_labels)
  Routine p1_betw_scene
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    TextComponent text_p1_betw_scene
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Now focus on the next scene.
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  Routine p4_instructions
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    CodeComponent code_training_vars
      Code Type = Py
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      Begin Routine:
        # allocate participant to relatedness response key according
        # to counterbalanced_vars.xlsx

        # =========================================
        # LOAD COUNTERBALANCING FILE
        # =========================================

        import pandas as pd

        counterbalance_file = 'counterbalanced_vars_behav.csv'

        df = pd.read_csv(counterbalance_file, header=1)

        # clean column names
        df.columns = df.columns.str.strip()

        # force numeric
        df['enc_relatedness_keys'] = pd.to_numeric(
            df['enc_relatedness_keys'],
            errors='coerce'
        )

        subnum = int(expInfo['participant'])

        # find participant row
        ind = df[df['Participant'] == subnum].index[0]

        print("enc_relatedness_keys:", df.loc[ind, 'enc_relatedness_keys'])

        # =========================================
        # ASSIGN RESPONSE KEYS
        # =========================================

        if df.loc[ind, 'enc_relatedness_keys'] == 0:

            key_related = 'q'
            key_unrelated = 'p'

            instruction_text = (
                'If they are related, press Q\n'
                'If they are unrelated, press P\n\n'
                'Press SPACEBAR to continue.'
            )

        elif df.loc[ind, 'enc_relatedness_keys'] == 1:

            key_related = 'p'
            key_unrelated = 'q'

            instruction_text = (
                'If they are related, press P\n'
                'If they are unrelated, press Q\n\n'
                'Press SPACEBAR to continue.'
            )

        # =========================================
        # RESPONSE KEY LIST
        # =========================================

        response_keys = [key_related, key_unrelated]
    TextComponent text_part4_instructions
      letterHeight = 0.052
      startVal [time (s)] = 0.0
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      text:
        Part 4.

        Now that you have learned to name and imagine the four scenes in detail, you will have a short practice run in the two tasks that you will undertake soon.

        Press SPACEBAR to continue.
    KeyboardComponent key_part4_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine enc_instruction_screen
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    TextComponent text_enc_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the first task, you will see different items (objects or animals) realistically integrated into the jungle and undersea scenes you memorized just now. After each presentation of an item and a scene, your goal will be to determine whether they were related or unrelated.

        An item is related to a scene if you think it is plausible that such an animal would live or that such an object would be used in such a scene in real life. If not, they are unrelated.

        Press SPACEBAR to continue
    KeyboardComponent key_proceed
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine enc_inst_2
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    CodeComponent code_11
      Code Type = Py
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      Begin Experiment:
        key_related = 'p'
        key_unrelated = 'q'

        instruction_text = (
            "If they are related, press P\n"
            "If they are unrelated, press Q\n\n"
            "Press SPACEBAR to continue."
        )
    TextComponent text_relatedness_keys
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent key_proceed_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine get_stim_list
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    CodeComponent code_get_stim_list
      Code Type = Py
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      Begin Experiment:
        subnum = expInfo['participant']
        stim_list = "stimuli/stim_lists/stimuli_list_training_sub_" + subnum + ".csv"
  Routine integrated_scene_presentation
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    ImageComponent image_integrated
      image [set every repeat] = $integrated_stimulus
      pos = (0, -0.05)
      size = (1.2, 0.675)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        _ = visual.ImageStim(win, image=integrated_stimulus)
  Routine congruency_response
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    TextComponent text_congruency
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Related
        or Unrelated?
    KeyboardComponent key_resp_congruency
      allowedKeys = 'p', 'q'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine blank1000_2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine debug_p3
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    CodeComponent code_9
      Code Type = Py
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      Begin Experiment:
        if DEBUG_SKIP_TO_PART4:
            p3_scene_loop.finished = True
  Routine ret_inst_gen
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job!

        Now you will learn about the memory task. It is a bit more complicated than the previous task, with a few changing screens. Please read carefully the detailed instructions before starting the practice run.

        Press SPACEBAR to continue.
    KeyboardComponent key_continue_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine ret_inst_1
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    CodeComponent code_ret_rand_vars
      Code Type = Py
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      Begin Routine:
        counterbalance_file = 'counterbalanced_vars_behav.csv'

        df_cb = pd.read_csv(counterbalance_file, sep=None, engine='python', skiprows=1)

        # Clean column names
        df_cb.columns = df_cb.columns.str.strip()
        df_cb.columns = df_cb.columns.str.replace('\ufeff', '')

        df_cb['Participant'] = df_cb['Participant'].astype(int)

        subnum = int(expInfo['participant'])

        matches = df_cb[df_cb['Participant'] == subnum]

        if len(matches) == 0:
            raise Exception(f"Participant {subnum} not found.")

        ind = matches.index[0]

        sub_conds = df_cb.loc[ind, df_cb.columns].values.tolist()

        # =========================================
        # CONTEXT KEYS
        # =========================================

        if sub_conds[2] == 0:
            key_jungle = '1'
            key_sea = '2'
        else:
            key_jungle = '2'
            key_sea = '1'

        # =========================================
        # COLORS
        # =========================================

        if sub_conds[3] == 0:
            color_jungle = 'purple'
            color_sea = 'pink'
        else:
            color_jungle = 'pink'
            color_sea = 'purple'

        # =========================================
        # SCENE KEYS
        # =========================================

        if sub_conds[4] == 0:
            key_JA = '1'
            key_JB = '2'
        else:
            key_JA = '2'
            key_JB = '1'

        if sub_conds[5] == 0:
            key_UA = '1'
            key_UB = '2'
        else:
            key_UA = '2'
            key_UB = '1'

        # =========================================
        # CONTEXT DISPLAY TEXT
        # =========================================

        if key_jungle == '1':
            context_jungle_txt = '1. Jungle'
            context_sea_txt = '2. Undersea'

            pos_jungle = (0,0.06)
            pos_sea = (0,0)

        else:
            context_sea_txt = '1. Undersea'
            context_jungle_txt = '2. Jungle'

            pos_sea = (0,0.06)
            pos_jungle = (0,0)

        print("TRAINING key_jungle:", key_jungle)
        print("TRAINING color_jungle:", color_jungle)
        print("TRAINING color_sea:", color_sea)
        print("DEBUG scene_stimulus:", scene_stimulus)
        print("DEBUG qst_num:", qst_num)
        print("DEBUG skipTrial:", skipTrial)
    CodeComponent code_ret_context_screen
      Code Type = Py
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      Begin Routine:
        if key_jungle == '1':
            context_jungle_txt = '1. Jungle'
            pos_jungle = (0,0.06)
            context_sea_txt = '2. Undersea'
            pos_sea = (0,0)
        elif key_jungle == '2':
            context_sea_txt = '1. Undersea'
            pos_sea = (0,0.06)
            context_jungle_txt = '2. Jungle'
            pos_jungle = (0,0)
    CodeComponent code_ret_scene_screens
      Code Type = Py
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      Begin Routine:
        # load the participant's scene-name mapping
        cond_file = "stimuli/cond_lists/scene_names_sub_" + expInfo['participant'] + ".csv"
        df = pd.read_csv(cond_file)

        # build dictionary mapping scene code -> label
        labels = dict(zip(df['scene_stimulus'], df['scene_label']))

        # Jungle scene labels
        if key_JA == '1':
            jungle_lbl_text = '1.' + labels['JA'] + '\n2.' + labels['JB']
        else:
            jungle_lbl_text = '1.' + labels['JB'] + '\n2.' + labels['JA']

        # Undersea scene labels
        if key_UA == '1':
            sea_lbl_text = '1.' + labels['UA'] + '\n2.' + labels['UB']
        else:
            sea_lbl_text = '1.' + labels['UB'] + '\n2.' + labels['UA']
  Routine ret_inst_2
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    ImageComponent image_inst2
      image = stimuli/instructions_imgs/inst1_integrated.png
      size = (2.11, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine ret_inst_3
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    ImageComponent image_inst3
      image = stimuli/instructions_imgs/inst2_integrated.png
      size = (2.11, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
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  Routine ret_inst_4
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    ImageComponent image_inst4
      image = stimuli/instructions_imgs/inst3_integrated.png
      size = (2.11, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
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  Routine ret_inst_5
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    ImageComponent image_inst5
      image = stimuli/instructions_imgs/inst4_integrated.png
      size = (2.11, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
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  Routine ret_inst_6
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  Routine item_imagine_scene
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    TextComponent text_imagine
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Imagine the associated scene
      units = height
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    ImageComponent item_cue
      image [set every repeat] = $recalled_stimulus
      size = (1.068, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    KeyboardComponent key_resp_remember
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_keypress
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Press 'SPACEBAR' when you imagine the scene.
    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        _ = visual.ImageStim(win, image=recalled_stimulus)
  Routine p4_blank1000
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine select_context
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    CodeComponent code_cor_context_key
      Code Type = Py
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      Begin Routine:
        # get the correct context for current trial

        if scene_cat == 'Jungle':
            cor_key = key_jungle
        elif scene_cat == 'Undersea':
            cor_key = key_sea
    TextComponent text_contrext_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which Type of scene did you imagine?
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    TextComponent text_sea
      color [set every repeat] = $color_sea
      letterHeight = 0.05
      pos [set every repeat] = pos_sea
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_sea_txt
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    TextComponent text_jungle
      color [set every repeat] = $color_jungle
      letterHeight = 0.05
      pos [set every repeat] = pos_jungle
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_jungle_txt
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    KeyboardComponent key_resp_context
      allowedKeys = '1','2'
      correctAns = $cor_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
      syncScreenRefresh = False
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  Routine blank500
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine context_confidence
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    CodeComponent code_get_context_choice
      Code Type = Py
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      Begin Routine:
        # get the chosen context to present above confidence scales

        if key_resp_context.keys == key_jungle:
            chosen_cont = 'Jungle'
            chosen_cont_color = color_jungle

        elif key_resp_context.keys == key_sea:
            chosen_cont = 'Undersea'
            chosen_cont_color = color_sea

        elif key_resp_context.keys == None:
            chosen_cont = 'Nothing was chosen'
            chosen_cont_color = 'Black'
    TextComponent text_context_choice
      color [set every repeat] = $chosen_cont_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_cont
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    SliderComponent slider_context_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_context_conf
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
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  Routine select_scene_name
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    CodeComponent code_set_scene_vars
      Code Type = Py
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      Begin Routine:
        # set current trial's scene labels, color and correct response key

        if scene_cat == 'Jungle':
            cur_labels = jungle_lbl_text
            cur_color = color_jungle

        elif scene_cat == 'Undersea':
            cur_labels = sea_lbl_text
            cur_color = color_sea

        cor_scene_key = None

        stim = integrated_stimulus.lower()

        if 'jungle_a' in stim:
            cor_scene_key = key_JA

        elif 'jungle_b' in stim:
            cor_scene_key = key_JB

        elif 'ocean_a' in stim:
            cor_scene_key = key_UA

        elif 'ocean_b' in stim:
            cor_scene_key = key_UB


        # DEBUG (keep this for now)
        if cor_scene_key is None:
            print("🚨 couldn't determine scene from filename")
    TextComponent text_scene_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = The type was
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    TextComponent text_actual_context
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $scene_cat
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    TextComponent text_q_scene
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which specific scene was it?
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    TextComponent text_labels
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $cur_labels
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    KeyboardComponent key_resp_scenes
      allowedKeys = '1','2'
      correctAns = $cor_scene_key
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine select_confidence
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    CodeComponent code_get_chosen_scene
      Code Type = Py
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      Begin Routine:
        # get the chosen scene to present above confidence scales

        if scene_cat == 'Jungle':

            if key_resp_scenes.keys == key_JA:
                chosen_scene = labels['JA']

            elif key_resp_scenes.keys == key_JB:
                chosen_scene = labels['JB']

            else:
                chosen_scene = 'Nothing was chosen'


        elif scene_cat == 'Undersea':

            if key_resp_scenes.keys == key_UA:
                chosen_scene = labels['UA']

            elif key_resp_scenes.keys == key_UB:
                chosen_scene = labels['UB']

            else:
                chosen_scene = 'Nothing was chosen'
    TextComponent text_chosen_scene
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_scene
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    SliderComponent slider_scene_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_scene_conf
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.9
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  Routine blank_3000
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    TextComponent text_blank3000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine end_screen
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    TextComponent text_end_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great job!

        You're done with the training.
        Soon we're going to start the two tasks.
    KeyboardComponent key_resp_exit
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine scene_label_2
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        # create dictionaries once (first row)
        if scene_label_loader.thisN == 0:
            scene_label_map = {}
            scene_img_map = {}

        # store mapping from the cond_list
        scene_label_map[scene_stimulus] = scene_label
        scene_img_map[scene_stimulus] = scene_img
  Routine ret_inst_7
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    ImageComponent image_inst7
      image = stimuli/instructions_imgs/inst6_integrated.png
      size = (2.11, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
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Flow
  Routine instructions_overall
  LoopInitiator scene_label_loader loopType="TrialHandler"
    conditionsFile = $"stimuli/cond_lists/scene_names_sub_%s.csv" % expInfo['participant']
    loopType = sequential
    nReps = 1
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    Routine scene_label_2
  LoopTerminator scene_label_loader
  Routine p1_instruction
  LoopInitiator groups_loop loopType="TrialHandler"
    conditionsFile = groups.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conditionFile': 'scenes_group1.xlsx'},
      {'conditionFile': 'scenes_group2.xlsx'},
      {'conditionFile': 'scenes_group3.xlsx'},
      {'conditionFile': 'scenes_group4.xlsx'}]
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $conditionFile
      loopType = sequential
      nReps = 1
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      Routine p1
    LoopTerminator trials_loop
  LoopTerminator groups_loop
  Routine p1_2_instructions
  LoopInitiator groups_loop_p1_2 loopType="TrialHandler"
    conditionsFile = conditions_part2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'group': 'JA', 'Image1': 'stimuli/scenes/JA_1.jpg', 'Image2': 'stimuli/scenes/JA_2.jpg', 'Image3': 'stimuli/scenes/JA_3.jpg', 'scene_name_showALL': 'scene_JA_lbl'},
      {'group': 'JB', 'Image1': 'stimuli/scenes/JB_1.jpg', 'Image2': 'stimuli/scenes/JB_2.jpg', 'Image3': 'stimuli/scenes/JB_3.jpg', 'scene_name_showALL': 'scene_JB_lbl'},
      {'group': 'UA', 'Image1': 'stimuli/scenes/UA_1.jpg', 'Image2': 'stimuli/scenes/UA_2.jpg', 'Image3': 'stimuli/scenes/UA_3.jpg', 'scene_name_showALL': 'scene_UA_lbl'},
      {'group': 'UB', 'Image1': 'stimuli/scenes/UB_1.jpg', 'Image2': 'stimuli/scenes/UB_2.jpg', 'Image3': 'stimuli/scenes/UB_3.jpg', 'scene_name_showALL': 'scene_UB_lbl'}]
    Routine p1_2_showALL_2
  LoopTerminator groups_loop_p1_2
  Routine p1_3_instructions_wide
  Routine p1_compare
  Routine p1_3_instructions_close
  Routine p1_compare_2
  Routine p2_instructions
  LoopInitiator part2_loop loopType="TrialHandler"
    conditionsFile = scene_stims_new.xlsx
    loopType = random
    nReps = 999
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    conditions:
      [{'scene_image': 'TESTstimuli/TESTscenes/JA_1.jpg', 'correct_key': 1, 'scene_name_p2': 'Tulon'},
      {'scene_image': 'TESTstimuli/TESTscenes/JA_2.jpg', 'correct_key': 1, 'scene_name_p2': 'Tulon'},
      {'scene_image': 'TESTstimuli/TESTscenes/JA_3.jpg', 'correct_key': 1, 'scene_name_p2': 'Tulon'},
      {'scene_image': 'TESTstimuli/TESTscenes/JB_1.jpg', 'correct_key': 2, 'scene_name_p2': 'Malbow'},
      {'scene_image': 'TESTstimuli/TESTscenes/JB_2.jpg', 'correct_key': 2, 'scene_name_p2': 'Malbow'},
      {'scene_image': 'TESTstimuli/TESTscenes/JB_3.jpg', 'correct_key': 2, 'scene_name_p2': 'Malbow'},
      {'scene_image': 'TESTstimuli/TESTscenes/UA_1.jpg', 'correct_key': 3, 'scene_name_p2': 'Negvi'},
      {'scene_image': 'TESTstimuli/TESTscenes/UA_2.jpg', 'correct_key': 3, 'scene_name_p2': 'Negvi'},
      {'scene_image': 'TESTstimuli/TESTscenes/UA_3.jpg', 'correct_key': 3, 'scene_name_p2': 'Negvi'},
      {'scene_image': 'TESTstimuli/TESTscenes/UB_1.jpg', 'correct_key': 4, 'scene_name_p2': 'Somar'},
      {'scene_image': 'TESTstimuli/TESTscenes/UB_2.jpg', 'correct_key': 4, 'scene_name_p2': 'Somar'},
      {'scene_image': 'TESTstimuli/TESTscenes/UB_3.jpg', 'correct_key': 4, 'scene_name_p2': 'Somar'}]
    Routine p2
    Routine part2_question
    Routine part2_feedback
  LoopTerminator part2_loop
  Routine part3_instructions_2
  LoopInitiator p3_scene_loop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine p3_reset_vis_vars
    LoopInitiator p3_vis_loop loopType="TrialHandler"
      conditionsFile = $vis_table
      loopType = random
      nReps = 1
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      Routine p3_skip_answered_questions
      Routine p3_blank1000
      Routine p3_visualize
      Routine p3_rate
      Routine p3_question
      LoopInitiator skip_loop loopType="TrialHandler"
        loopType = random
        nReps = myReps
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        Routine p3_study_again
      LoopTerminator skip_loop
    LoopTerminator p3_vis_loop
    LoopInitiator loop_msg loopType="TrialHandler"
      loopType = random
      nReps = last_scene
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      Routine p3_correct_msg
    LoopTerminator loop_msg
  LoopTerminator p3_scene_loop
  Routine p4_instructions
  Routine enc_instruction_screen
  Routine enc_inst_2
  Routine get_stim_list
  LoopInitiator trials_enc loopType="TrialHandler"
    conditionsFile = $stim_list
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus_path', 'TESTstimuli/TESTitems/JA_animal1_monkey.jpg'), ('scene_cat', 'Jungle'), ('scene_label', 'Tulon'), ('item_cat', None), ('item_type', 'Animal'), ('congruency', 'sc'), ('correct_key', 'p')]),
      OrderedDict([('stimulus_path', 'TESTstimuli/TESTitems/JA_animal6_ant.jpg'), ('scene_cat', 'Jungle'), ('scene_label', 'Tulon'), ('item_cat', None), ('item_type', 'Animal'), ('congruency', 'sc'), ('correct_key', 'p')]),
      OrderedDict([('stimulus_path', 'TESTstimuli/TESTitems/JA_animal12_octopus.jpg'), ('scene_cat', 'Jungle'), ('scene_label', 'Tulon'), ('item_cat', None), ('item_type', 'Animal'), ('congruency', 'si'), ('correct_key', 'q')]),
      OrderedDict([('stimulus_path', 'TESTstimuli/TESTitems/JA_animal16_hummingbird.jpg'), ('scene_cat', 'Jungle'), ('scene_label', 'Tulon'), ('item_cat', None), ('item_type', 'Animal'), ('congruency', 'sc'), ('correct_key', 'p')]),
      OrderedDict([('stimulus_path', 'TESTstimuli/TESTitems/JA_object3_boots.jpg'), ('scene_cat', 'Jungle'), ('scene_label', 'Tulon'), ('item_cat', None), ('item_type', 'Object'), ('congruency', 'sc'), ('correct_key', 'p')]),
      OrderedDict([('stimulus_path', 'TESTstimuli/TESTitems/JB_animal1_monkey.jpg'), ('scene_cat', 'Jungle'), ('scene_label', 'Malbow'), ('item_cat', None), ('item_type', 'Animal'), ('congruency', 'sc'), ('correct_key', 'p')])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
    Routine integrated_scene_presentation
    Routine congruency_response
    Routine blank1000_2
  LoopTerminator trials_enc
  Routine ret_inst_gen
  Routine ret_inst_1
  Routine ret_inst_2
  Routine ret_inst_3
  Routine ret_inst_4
  Routine ret_inst_5
  Routine ret_inst_6
  Routine ret_inst_7
  LoopInitiator part4_loop loopType="TrialHandler"
    conditionsFile = $stim_list
    loopType = random
    nReps = 1
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    Routine item_imagine_scene
    Routine p4_blank1000
    Routine select_context
    Routine blank500
    Routine context_confidence
    Routine p4_blank1000
    Routine select_scene_name
    Routine blank500
    Routine select_confidence
    Routine blank_3000
  LoopTerminator part4_loop
  Routine end_screen
